WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(DisplayDevice(Description="The display the dome projector is on (BonVision CreateWindow); a launch property."))
-> GroupWorkflow RigSetup
  Description: Reads this machine's rig.yml (ReadRigConfig) as av-dome does, the two workflows sharing one rig.yml per rig, takes each device by name (RigDevice), opens the Harp boards, stepper drivers, both Lickety Splits and the cameras, zeroes the spouts, opens BonVision's window and loads the reward lines. The task uses the left Lickety Split and the left valve; the rest are opened and recorded because rig.yml lists them and the manifest expects a folder for each.
  Workflow
    GroupWorkflow ReadRigConfig
      Description: Resolves this machine's rig configuration directory (ConfigRoot\MachineName), publishes it as RigConfigDirectory, and reads rig.yml from it. Fails at startup if either is missing.
      Workflow
        OpenRigs.Core.ResolveRigConfigDirectory(ConfigRoot=C:\Coen-Lab-Local\RigConfigs)
        -> AsyncSubject RigConfigDirectory
        -> IncludeWorkflow(Path=OpenRigs.Core:ReadRigConfig.bonsai, FileName=rig.yml)
        -> WorkflowOutput
    -> UclOpenCoenDomeNavigation.DeserializeFromYaml(Type=TypeMapping<UclOpenCoenDomeNavigation.UclOpenCoenDomeNavigationRig>)
    -> Take(Count=1)
    -> AsyncSubject RigConfigs

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=BehaviorBoard)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=BehaviorBoard-Main)
    -> AsyncSubject BehaviorBoard-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=TimestampGeneratorGen3)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=TimestampGeneratorGen3-Main)
    -> AsyncSubject TimestampGeneratorGen3-Main

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=StepperDriver)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=StepperDriver-A)
    -> AsyncSubject StepperDriver-A

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LicketySplit)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=LicketySplit-Left)
    -> AsyncSubject LicketySplit-Left

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=LicketySplit)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=LicketySplit-Right)
    -> AsyncSubject LicketySplit-Right

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=Camera-Face)
    -> AsyncSubject Camera-Face

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=Camera-Pupil)
    -> AsyncSubject Camera-Pupil

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=Camera)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=Camera-Body)
    -> AsyncSubject Camera-Body

    GroupWorkflow HardwareDevices
      Description: The Harp devices from rig.yml: timestamp generator (the clock), Behavior board (valves, camera trigger, wheel), the two stepper drivers of the spout stage, and both Lickety Splits; each behind its <Name>.Data and <Name>.Commands subjects.
      Workflow
        SubscribeSubject TimestampGeneratorGen3-Main
        -> PropertyMapping(PortName(Selector=Settings.PortName), TimerFrequency(Selector=Settings.TimerFrequency))
        -> IncludeWorkflow
          Path=OpenRigs.Devices:TimestampGeneratorGen3.bonsai
          CommandsSubjectName=TimestampGeneratorCommands
          PortName=COM16
          DumpRegisters=true
          Heartbeat=Enabled
          EventsSubjectName=ClockSynchronizerEvents
          TimerFrequency=Timer1000Hz

        SubscribeSubject ClockSynchronizerEvents
        -> PublishSubject TimestampGeneratorGen3-Main.Data

        BehaviorSubject<Bonsai.Harp.HarpMessage> TimestampGeneratorGen3-Main.Commands

        SubscribeSubject TimestampGeneratorGen3-Main.Commands
        -> MulticastSubject TimestampGeneratorCommands

        SubscribeSubject BehaviorBoard-Main
        -> PropertyMapping => #9
          PortName(Selector=Settings.PortName)
          CountsPerRev(Selector=Settings.RunningWheel.CountsPerRev)
          WheelDiameterMm(Selector=Settings.RunningWheel.WheelDiameterMm)
          EnableTrigger0(Selector=Settings.CameraTriggerController.Trigger0Enabled)
          EnableTrigger1(Selector=Settings.CameraTriggerController.Trigger1Enabled)
          Trigger0Frequency(Selector=Settings.CameraTriggerController.Trigger0Frequency)
          Trigger1Frequency(Selector=Settings.CameraTriggerController.Trigger1Frequency)
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.Outputs.DO3)
        -> UclOpenCoenDomeNavigation.MatchPulseOutput(Type=TypeMapping<UclOpenCoenDomeNavigation.FixedPulse>)
        -> PropertyMapping(PulseDO3(Selector=PulseWidthMs)) => #18
        SubscribeSubject BehaviorBoard-Main
        -> MemberSelector(Selector=Settings.PulseController.OutputPulseEnable) => #20
        SubscribeSubject RigConfigs
        -> MemberSelector(Selector=Zapit.TriggerLine) => #22
        #20, #22 -> Zip
        -> WithoutPulseLine
        -> PropertyMapping(OutputPulseEnable) => #25
        #9, #18, #25 -> GroupWorkflow BehaviorBoards
            ExternalizedMapping(PortName) => #0
            -> IncludeWorkflow => #1
              Path=OpenRigs.Devices:BehaviorBoard.BehaviorBoard.bonsai
              CommandsSubjectName=BehaviorBoard-Main.Commands
              PortName=COM11
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=BehaviorBoard-Main.Data
            #1, #0 -> ClearOutputsOnStop(PortName=COM11, Outputs=DO3)

            ExternalizedMapping(CountsPerRev, WheelDiameterMm)
            -> GroupWorkflow RunningWheel
              Description: OpenRigs.Devices' BehaviorBoard.RunningWheel with the encoder in Position mode, as Tom Childs' workflow and coen-behaviour-box set it: the include sets Displacement and then differences and accumulates, which gives a speed sample, not a distance (audit, 9 Nov 2026). Position mode: AnalogData's Encoder is the absolute count, differenced across its 16-bit wrap and accumulated into the distance in cm at CountsPerRev and WheelDiameterMm (rig.yml), published as BoardWheelDistanceCm.
              Workflow
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2))
                -> Take(Count=1) => #1
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Position))
                -> Take(Count=1) => #3
                Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2))
                -> Take(Count=1) => #5
                #1, #3, #5 -> Concat
                -> MulticastSubject BehaviorBoard-Main.Commands => #7
                SubscribeSubject BehaviorBoard-Main.Data => #8
                #7, #8 -> SubscribeWhen

                SubscribeSubject BehaviorBoard-Main.Data
                -> DelaySubscription(DueTime=PT0.1S)
                -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
                -> MemberSelector(Selector=Encoder)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
                  Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
                -> Accumulate => #16
                ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #17
                #16, #17 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject")
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
                    Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
                    ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
                    -> IntProperty(Value=170)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
                      Expression: (it*Math.Pi)/10
                    -> PropertyMapping(Value) => #6
                    #2, #6 -> Multiply(Operand=FloatProperty(Value=53.407074))
                    -> WorkflowOutput
                -> PublishSubject BoardWheelDistanceCm

            ExternalizedMapping(PulseDO1, PulseDO2, PulseDO3, OutputPulseEnable)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.PulseController.bonsai
              BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
              OutputPulseEnable="DO1 DO2 DO3"
              PulseDO1=40
              PulseDO2=50
              PulseDO3=3000
              BehaviorEventsSubjectName=BehaviorBoard-Main.Data
              TriggerPulseSubjectName=TriggerPulse
              TriggerCalibratedPulseSubjectName=TriggerCalibratedPulse

            BehaviorSubject<System.Tuple(System.Int32,System.Double)> DeliverRewardCommand
            -> IncludeWorkflow(Path=Extensions\DeliverReward.bonsai)

            ExternalizedMapping(EnableTrigger0, EnableTrigger1, Trigger0Frequency, Trigger1Frequency)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:BehaviorBoard.CameraTriggerController.bonsai
              EnableTrigger0=true
              EnableTrigger1=false
              Trigger0Frequency=50
              Trigger1Frequency=50
              BehaviorCommandsSubjectName=BehaviorBoard-Main.Commands
              BehaviorEventsSubjectName=BehaviorBoard-Main.Data
              Camera0TriggerEventsSubjectName=Camera0TriggerEvents
              Camera1TriggerEventsSubjectName=Camera1TriggerEvents

            BooleanProperty(Value=true)
            -> Delay(DueTime=PT2S)
            -> MulticastSubject StartCameras

            BehaviorSubject<System.Int32> ZapitTriggerClear

            SubscribeSubject ZapitTriggerClear
            -> DigitalOutputLine => #15
            -> PropertyMapping(OutputClear) => #16
            #15, #16 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DO3))
            -> MulticastSubject BehaviorBoard-Main.Commands

        GroupWorkflow LicketySplits
            SubscribeSubject LicketySplit-Right
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LicketySplit-Right.Commands
              PortName=COM13
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LicketySplit-Right.Data
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateRight

            SubscribeSubject LicketySplit-Left
            -> PropertyMapping
              PortName(Selector=Settings.PortName)
              Channel0TriggerThreshold(Selector=Settings.Channel0TriggerThreshold)
              Channel0UntriggerThreshold(Selector=Settings.Channel0UntriggerThreshold)
            -> IncludeWorkflow
              Path=OpenRigs.Devices:LicketySplit.bonsai
              CommandsSubjectName=LicketySplit-Left.Commands
              PortName=COM15
              DumpRegisters=true
              Heartbeat=Enabled
              EventsSubjectName=LicketySplit-Left.Data
              Channel0TriggerThreshold=0
              Channel0UntriggerThreshold=0
              LickStateSubjectName=LickStateLeft

        GroupWorkflow Cameras
            SubscribeSubject Camera-Face
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366326
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Face.Data

            SubscribeSubject Camera-Body
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366318
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Body.Data

            SubscribeSubject Camera-Pupil
            -> MemberSelector(Selector=Settings)
            -> PropertyMapping(SerialNumber(Selector=SerialNumber), ExposureTime(Selector=ExposureTime), Gain(Selector=Gain), Binning(Selector=Binning))
            -> IncludeWorkflow
              Path=OpenRigs.Devices:TriggeredSpinnaker.bonsai
              ExposureTime=19000
              Gain=0
              Binning=1
              SerialNumber=25366328
              ColorProcessing=Default
              CameraTriggerEventsSubjectName=Camera0TriggerEvents
              FrameEventsSubjectName=Camera-Pupil.Data

        GroupWorkflow StepperDriver
            SubscribeSubject StepperDriver-A
            -> PropertyMapping(StepperDriver1PortName(Selector=Settings.PortName)) => #1
            SubscribeSubject StepperDriver-B
            -> PropertyMapping(StepperDriver2PortName(Selector=Settings.PortName)) => #13
            #1, #13 -> GroupWorkflow InitializeStepperDrivers
                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
                ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
                #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
                -> BehaviorSubject StepperDriver1Events

                BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
                ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
                #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
                -> BehaviorSubject StepperDriver2Events

            GroupWorkflow Declarations
              Description: Typed subjects the trial loop writes and reads: trial count, zeroing state, the decision variable and visual azimuth, and the Zapit command and reply streams.
              Workflow
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothOut
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_BothIn
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_LeftIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPosition_RightIN
                BehaviorSubject<System.Tuple(System.Int32,System.Int32,System.Int32,System.Int32,System.Int32)> StepperPositionCommand

                IntProperty(Value=0) => #5
                IntProperty(Value=0) => #6
                IntProperty(Value=0) => #7
                IntProperty(Value=0) => #8
                IntProperty(Value=0) => #9
                #5, #6, #7, #8, #9 -> Zip
                -> BehaviorSubject StepperPosition_HOME

            GroupWorkflow InitialiseStepperDriverSettings
                SubscribeSubject StepperDriver1Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.1S)
                -> Unit
                -> SelectMany "Initialize StepperDriver1"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate100Hz)) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                    Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #19
                    Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #21
                    Disable PropertyMapping(Motor2StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=280)) => #23
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #19, #21, #23 -> Concat
                    -> MulticastSubject StepperDriver1Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #6
                SubscribeSubject StepperDriver2Events
                -> Take(Count=20)
                -> TakeLast(Count=1)
                -> Delay(DueTime=PT0.2S)
                -> Unit
                -> SelectMany "Initialize StepperDriver2"
                    WorkflowInput Source1

                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                    Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                    Disable PropertyMapping(Motor0StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=280)) => #16
                    Disable PropertyMapping(Motor1StepInterval)
                    -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=280)) => #18
                    #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #16, #18 -> Concat
                    -> MulticastSubject StepperDriver2Commands
                    -> WorkflowOutput
                -> Delay(DueTime=PT0.1S) => #13
                #6, #13 -> Zip
                -> BooleanProperty(Value=true)
                -> BehaviorSubject StepperDriversInitialized => #16
                Annotation "Ensure I get the initial states"(Text="") => #17
                #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
                -> MulticastSubject StepperDriver1Commands
                #18 -> MulticastSubject StepperDriver2Commands

            GroupWorkflow ReadSwitchStates
                SubscribeSubject StepperDriver1Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #2
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor0_switchState
                #2 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor1_switchState
                #2 -> Index(Operand=IntProperty(Value=2))
                -> BehaviorSubject _Motor2_switchState

                SubscribeSubject StepperDriver2Events
                -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
                -> UnpackSwitchTriggers => #11
                -> Index(Operand=IntProperty(Value=0))
                -> BehaviorSubject _Motor3_switchState
                #11 -> Index(Operand=IntProperty(Value=1))
                -> BehaviorSubject _Motor4_switchState

            GroupWorkflow ZEROMotors
                IncludeWorkflow => #0
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor0_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor0_switchState
                IncludeWorkflow => #1
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor1_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor1_switchState
                IncludeWorkflow => #2
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor2_switchState
                  MotorID=2
                  SubjectName_StepperDriver=StepperDriver1Commands
                  SubjectName_switchState_again=_Motor2_switchState
                IncludeWorkflow => #3
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor3_switchState
                  MotorID=0
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor3_switchState
                IncludeWorkflow => #4
                  Path=Extensions\ZEROingMotors.bonsai
                  SubjectName_switchState=_Motor4_switchState
                  MotorID=1
                  SubjectName_StepperDriver=StepperDriver2Commands
                  SubjectName_switchState_again=_Motor4_switchState
                #0, #1, #2, #3, #4 -> Zip => #5
                -> IncludeWorkflow(Path=Extensions\HarpDelay.bonsai, DueSeconds=2) => #6
                -> BooleanProperty(Value=true)
                -> MulticastSubject SteppersZEROed
                -> SelectMany SendSpoutInCommand
                    WorkflowInput Source1 => #0
                    Annotation MoveToInPosition(Text=MoveToInPosition)
                    -> SubscribeSubject StepperPosition_BothIn
                    -> MulticastSubject StepperPositionCommand => #3
                    #0, #3 -> Sample
                    -> WorkflowOutput
                -> WorkflowOutput
                #0 -> StringProperty(Value=Motor0) => #11
                #1 -> StringProperty(Value=Motor1) => #12
                #2 -> StringProperty(Value=Motor2) => #13
                #3 -> StringProperty(Value=Motor3) => #14
                #4 -> StringProperty(Value=Motor4) => #15
                #5 -> StringProperty(Value=AllZeroed) => #16
                #6 -> StringProperty(Value=HarpDelay) => #17
                SubscribeSubject StepperDriversInitialized
                -> Take(Count=1)
                -> StringProperty(Value=StepperDriversInitialized) => #20
                SubscribeSubject Timestamp
                -> Take(Count=1)
                -> StringProperty(Value=Timestamp) => #23
                #20, #23, #11, #12, #13, #14, #15, #16, #17 -> Merge
                -> StartupWatchdog
                  Expected="StepperDriversInitialized, Timestamp, Motor0, Motor1, Motor2, Motor3, Motor4, AllZeroed, HarpDelay"
                  TimeoutSeconds=60
                  What="Zeroing the spout steppers (needed for Ready)"

            SubscribeSubject StepperPositionCommand
            -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai) => #8
            SubscribeSubject SteppersZEROed
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            #8, #10 -> SubscribeWhen

            SubscribeSubject StepperDriver1Events
            -> PublishSubject StepperDriver-A.Data

            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver-A.Commands

            SubscribeSubject StepperDriver-A.Commands
            -> MulticastSubject StepperDriver1Commands

            SubscribeSubject StepperDriver2Events
            -> PublishSubject StepperDriver-B.Data

            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver-B.Commands

            SubscribeSubject StepperDriver-B.Commands
            -> MulticastSubject StepperDriver2Commands

        GroupWorkflow Zapit
          Description: Connects to the Zapit optogenetics server only when the task YAML enables optogenetics. Commands arrive on ZapitCommands, replies leave on ZapitReplies.
          Workflow
            SubscribeSubject TaskConfig
            -> MemberSelector(Selector=TaskParameters.Optogenetics.UseZapit)
            -> Take(Count=1)
            -> Condition OptogeneticsEnabled?
                WorkflowInput Source1
                -> WorkflowOutput
            -> SelectMany ConnectZapit
                WorkflowInput Source1

                SubscribeSubject RigConfigs
                -> PropertyMapping(Host(Selector=Zapit.Host), Port(Selector=Zapit.Port))
                -> IncludeWorkflow(Path=Extensions\Zapit.bonsai, Host=127.0.0.1, Port=1488, ReceiveTimeout=5000)
                -> WorkflowOutput

                SubscribeSubject ZapitReplies
                -> Condition ZapitError?
                  Description: Any error reply from Zapit stops the experiment: a refused StartStimulus (arming or software start), a failed StopStimulus, or a failed query. Carrying on would log trials as stimulated (or stopped) that were not. The StopStimulus sent when the workflow stops is read by ZapitClient itself.
                  Workflow
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: IsError
                    -> WorkflowOutput
                -> Format
                  Format: Zapit answered {0} with an error (reply value {1}, laserOn {2}). Check the MATLAB window: is the conditions file the task file names (zapitConfigPath) loaded in Zapit, is Zapit calibrated, and is the DAQ working?
                  Selector="Command,Value,LaserOn"
                -> ThrowError

                SubscribeSubject ZapitReplies
                -> Condition ConditionCountReply?
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: CommandCode == 4
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject TaskParams => #12
                #11, #12 -> Zip
                -> CheckZapitConditionCount

                SubscribeSubject RigConfigs => #15
                SubscribeSubject SubjectId => #16
                #15, #16 -> Zip
                -> Condition SoftwareTriggeredRealMouse?
                  Description: A rig without hardware triggering (rig.yml zapit.hardwareTriggered false) starts the laser when the command reaches Zapit, tens of ms late and with no onset in the Harp log. It is only for test mice: an optogenetics experiment with any other mouse stops here.
                  Workflow
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: !Item1.Zapit.HardwareTriggered && !Item2.ToLowerInvariant().StartsWith("test")
                    -> WorkflowOutput
                -> Format
                  Format: Optogenetics with a real mouse ({0}) needs a hardware-triggered rig, and this rig's rig.yml has zapit.hardwareTriggered false. Cable the trigger line to the Zapit DAQ trigger input and set hardwareTriggered: true in rig.yml. Rigs without hardware triggering are for test mice only.
                  Selector=Item2
                -> ThrowError

    SubscribeSubject RigConfigs
    -> PropertyMapping(FileName(Selector=ProjectionCalibration.MeshMapPath), GammaLut(Selector=ProjectionCalibration.GammaLutPath)) => #38
    ExternalizedMapping(DisplayDevice) => #39
    #38, #39 -> GroupWorkflow BonvisionResources
      Description: BonVision's window, mesh mapping and gamma correction for the dome projector, from projectionCalibration in rig.yml; DisplayDevice is a launch property.
      Workflow
        ExternalizedMapping(DisplayDevice)
        -> Bonsai.Shaders.CreateWindow
          Width=1920
          Height=1080
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Fixed
          WindowState=Fullscreen
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=60
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Resources.LoadResources

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-135, Right=135, Bottom=-22.5, Top=82.5)
        -> BehaviorSubject DrawStimuli => #6
        ExternalizedMapping(FileName) => #7
        #6, #7 -> IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=C:\RigConfigs\MeshMap.csv) => #8
        ExternalizedMapping(GammaLut) => #9
        #8, #9 -> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\RigConfigs\gammalut.bmp)
    -> DisposeOnRenderThread(TimeoutSeconds=2)

    GroupWorkflow RewardLines
      Description: Builds the left and right reward lines from the rig configuration: rewardValves says which behavior board line each side is, and that line's entry in the outputs is loaded. A calibrated line reads and fits its valve calibration from the rig configuration directory, a fixed line keeps its width. The Logging group snapshots each calibration read into the experiment folder.
      Workflow
        SubscribeSubject RigConfigs => #0
        SubscribeSubject RigConfigDirectory => #1
        #0, #1 -> Zip
        -> LoadSideRewardLine(Side=Left)
        -> Take(Count=1)
        -> AsyncSubject RewardLineLeft

        SubscribeSubject RigConfigs => #6
        SubscribeSubject RigConfigDirectory => #7
        #6, #7 -> Zip
        -> LoadSideRewardLine(Side=Right)
        -> Take(Count=1)
        -> AsyncSubject RewardLineRight

    SubscribeSubject RigConfigs
    -> MemberSelector(Selector=StepperDriver)
    -> UclOpenCoenDomeNavigation.RigDevice(Name=StepperDriver-B)
    -> AsyncSubject StepperDriver-B

GroupWorkflow Declarations
  Description: Typed subjects shared across groups: whether the spouts are zeroed, the Zapit command and reply streams, and TrialOutcome (true once a trial's outcome, rewarded or not, is known: TrialRow builds the row then, so a Stop during the 2 s before TrialEnded does not lose it).
  Workflow
    BehaviorSubject<System.Boolean> SteppersZEROed
    BehaviorSubject<ZapitCommand> ZapitCommands
    BehaviorSubject<ZapitReply> ZapitReplies
    PublishSubject<System.Boolean> TrialOutcome

ExternalizedMapping
  SubjectId(Description="The mouse; the launch's own, from rig-control.")
  SessionId(Description="The session number; the launch's own, from rig-control.")
  TaskPath
    Description="The task file read at Go: rig-control's copy of the one chosen at launch, with the form's edits (lib-open-rigs settings-files plan); from the editor, config\task-abstract-av-corridor.yml."
-> GroupWorkflow Initialization
  Description: The experiment controller (OpenRigs.Control, ExperimentControl), as av-dome's: SubjectId and SessionId from the launch, ManualRewardUl and StepSize settable until Go and the spout commands at any time; at Go RunSettings (subject, session) and TaskFilePath (TaskPath, the task file rig-control wrote) are published and StartExperiment turns true; Ready is reported once the spouts are zeroed.
  Workflow
    ExternalizedMapping(Value(DisplayName=SubjectId, Description="The subject (mouse) ID."))
    -> StringProperty(Value="")
    -> Take(Count=1)
    -> AsyncSubject SubjectId

    ExternalizedMapping(SessionId) => #4
    SubscribeSubject SubjectId
    -> PropertyMapping(SubjectId) => #6
    #4, #6 -> IncludeWorkflow => #7
      Path=OpenRigs.Control:ExperimentControl.bonsai
      SubjectId=UNMAPPED
      SessionId=""
      ControlEndpoint=@tcp://127.0.0.1:5561
      Parameters
        Parameter
          Name=TrainingStage
          Value=0
          Description: Row of the task file's trainingStages to run, 0 to 5 (Tom Childs' stages 1 to 6; a row past the end uses the last): suggested from the mouse's earlier experiments of the modality.
          Minimum=0
          Maximum=5
          WholeNumber=true
        Parameter
          Name=ManualRewardUl
          Value=3
          Description: Microlitres RewardLeft and RewardRight deliver before Go, taken live; after Go too. The task's own rewards are this stage's rewardSizeUl (trainingStages).
          Minimum=0
        Parameter(Name=SpoutStepSize, Value=150, Description="Motor steps each spout nudge command moves, taken live while ready.", Minimum=1, WholeNumber=true)
      Commands
        Command(Name=RewardLeft, Description="Deliver one reward on the left spout (flush).")
        Command(Name=RewardRight, Description="Deliver one reward on the right spout (flush).")
        Command(Name=SpoutsHome, Description="Move both spouts to the home position.")
        Command(Name=SpoutsIn, Description="Move both spouts to the in position.")
        Command(Name=SpoutsOut, Description="Move both spouts to the out position.")
        Command(Name=SaveSpoutPositions, Description="Save the spouts' in positions to this mouse's file.")
        Command(Name=LeftUp, Description="Nudge the left spout up by SpoutStepSize.")
        Command(Name=LeftDown, Description="Nudge the left spout down by SpoutStepSize.")
        Command(Name=RightUp, Description="Nudge the right spout up by SpoutStepSize.")
        Command(Name=RightDown, Description="Nudge the right spout down by SpoutStepSize.")
        Command(Name=LeftFront, Description="Nudge the left spout forward by SpoutStepSize.")
        Command(Name=LeftBack, Description="Nudge the left spout back by SpoutStepSize.")
        Command(Name=RightFront, Description="Nudge the right spout forward by SpoutStepSize.")
        Command(Name=RightBack, Description="Nudge the right spout back by SpoutStepSize.")
        Command(Name=BaseLeft, Description="Nudge the spout base left by SpoutStepSize.")
        Command(Name=BaseRight, Description="Nudge the spout base right by SpoutStepSize.")
    SubscribeSubject SubjectId => #8
    #7, #8 -> SubscribeWhen

    SubscribeSubject ExperimentGo
    -> MemberSelector(Selector=SubjectId) => #11
    SubscribeSubject ExperimentGo
    -> MemberSelector(Selector=SessionId) => #13
    #11, #13 -> Zip
    -> Take(Count=1)
    -> Condition RunSettingsValid(Description="Subject and session given.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1.Trim().Length > 0 && Item2.Trim().Length > 0
        -> WorkflowOutput
    -> First
    -> AsyncSubject RunSettings

    SubscribeSubject ExperimentGo => #19
    ExternalizedMapping => #44
      Value
        DisplayName=TaskPath
        Description="The task file read at Go: rig-control's copy of the one chosen at launch, with the form's edits; from the editor, config\task-abstract-av-corridor.yml."
    Source1=#19, Source1=#44 -> StringProperty(Value=..\config\task-abstract-av-corridor.yml)
    -> Take(Count=1)
    -> AsyncSubject TaskFilePath

    BooleanProperty(Value=false)
    -> BehaviorSubject StartExperiment

    SubscribeSubject ExperimentGo
    -> BooleanProperty(Value=true)
    -> MulticastSubject StartExperiment

    IntProperty(Value=150)
    -> BehaviorSubject StepperStepSize

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=SpoutStepSize)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StepSizeToInt
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize

    DoubleProperty(Value=3)
    -> BehaviorSubject RewardUl

    SubscribeSubject ControlEvents
    -> OpenRigs.Control.OnParameterSet(Name=ManualRewardUl)
    -> Condition Given?(Description="A blank set keeps the size as it was.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Trim().Length > 0
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToDouble
      Expression: Convert.ToDouble(it)
    -> MulticastSubject RewardUl

    SubscribeSubject SteppersZEROed
    -> Take(Count=1)
    -> OpenRigs.Control.ReportPhase(Phase=Ready)

GroupWorkflow Task
  Description: At Go: reads the task file (TaskPath, rig-control's copy of config\task-abstract-av-corridor.yml with the form's edits; from the editor config\task-abstract-av-corridor.yml), publishes it as TaskConfig and its taskParameters as TaskParams once CheckWaveforms has found src\waveforms made for its sweep, and from them Modality, which stimuli are active, TrainingStage (the experiment setting, at Go) with StageRow (that row of trainingStages: what the stage does) and TaskRandom (every draw, from rngSeed). InitVars declares the task's state and loads the tones and error tone. Tom Childs' Params, read from session-schemas before.
  Workflow
    SubscribeSubject TaskFilePath
    -> UclOpenCoenDomeNavigation.ReadTextFile
    -> UclOpenCoenDomeNavigationTask.DeserializeFromYaml(Type=TypeMapping<UclOpenCoenDomeNavigationTask.UclOpenCoenDomeNavigationTaskLogic>)
    -> AsyncSubject TaskConfig

    SubscribeSubject TaskConfig
    -> MemberSelector(Selector=TaskParameters)
    -> CheckWaveforms(FileName=waveforms\sweep.txt)
    -> AsyncSubject TaskParams

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Modality)
    -> BehaviorSubject Modality

    GroupWorkflow InitVars => #11
        GroupWorkflow VisParams
            SubscribeSubject TaskParams => #0
            -> MemberSelector(Selector=SweepStartHz) => #1
            #0 -> MemberSelector(Selector=SweepEndHz) => #2
            #1, #2 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #4
              Expression: it.item2/it.Item1
            SubscribeSubject StartFreqV => #5
            SubscribeSubject EndFreqV => #6
            #5, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #8
              Expression: it.item2/it.Item1
            #4, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Aud-Over-Vis-Multiple
              Expression: it.item1/it.Item2
            -> BehaviorSubject VisToAudMultiple

            Disable SubscribeSubject DrawStimuli
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=10
              ExtentY=10
              LocationX=0
              LocationY=0
              Layer=0
              Angle=90
              ColorR=0.5
              ColorG=0.5
              ColorB=0.5
              ColorA=1

            Disable SubscribeSubject DrawStimuli
            -> Disable IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=10
              Layer=0
              ExtentX=180
              ExtentY=60
              SpatialFrequency=0.06
              TemporalFrequency=0
              Phase=0
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=100
              Aperture=0
              Opacity=1

            DoubleProperty(Value=0.03)
            -> BehaviorSubject StartFreqV

            DoubleProperty(Value=0.3)
            -> BehaviorSubject EndFreqV

            DoubleProperty(Value=0)
            -> BehaviorSubject CurrPhase

            DoubleProperty(Value=0)
            -> BehaviorSubject CurrFreqV

            DoubleProperty(Value=1)
            -> BehaviorSubject Opacity

            DoubleProperty(Value=1)
            -> BehaviorSubject CurrOpacity

        GroupWorkflow InitVars
            BehaviorSubject<System.TimeSpan> InterTrialInterval
            BehaviorSubject<System.Double> AudAmplitude
            BehaviorSubject<System.Int64> BeepTimer
            BehaviorSubject<System.Double> TrackLength
            BehaviorSubject<System.Double> RewardFloorFreq
            BehaviorSubject<System.Double> RewardCeilFreq
            BehaviorSubject<System.Double> RewardFloorVirtualPos
            BehaviorSubject<System.Double> RewardCeilVirtualPos
            BehaviorSubject<System.Double> TrialEndFreq
            BehaviorSubject<System.Double> TrialEndFreqV
            BehaviorSubject<System.Boolean> TrialEnded
            BehaviorSubject<OpenCV.Net.Mat> Buffer
            BehaviorSubject<OpenCV.Net.Mat> RewardBuffer
            BehaviorSubject<OpenCV.Net.Mat> ErrorBuffer

            SubscribeSubject TaskParams => #14
            -> MemberSelector(Selector=ToneAmplitude) => #15
            #14 -> MemberSelector(Selector=SweepSteps)
            -> PropertyMapping(Count) => #25
            Annotation(Text="Rescales Amplitude to 1 or 0 Depending on if AudioStimActive is True or False")
            -> SubscribeSubject AudioStimActive
            -> PropertyMapping(Value) => #18
            #15, #18 -> Multiply(Operand=DoubleProperty(Value=1))
            -> MulticastSubject AudAmplitude
            -> PropertyMapping(RangeMax) => #21
            Bonsai.Dsp.MatrixReader(Path=./waveforms/all_waveforms.bin, Offset=0, SampleRate=48000, ChannelCount=1, BufferLength=2400, Depth=F32, Layout=RowMajor) => #22
            #21, #22 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear) => #23
            #23, #25 -> Take(Count=100)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> ToList
            -> AsyncSubject WaveformDict

            IntProperty(Value=0) => #30
            -> BehaviorSubject LickCount
            #30 -> BehaviorSubject TrialNumber
            #30 -> BehaviorSubject CurrFreq

            BooleanProperty(Value=false)
            -> BehaviorSubject WasRewarded

            BooleanProperty(Value=false)
            -> BehaviorSubject WasTimeout

            BooleanProperty(Value=false)
            -> BehaviorSubject HitEndOfTrack

            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform TimeLimit
              Expression: TimeSpan.FromSeconds(it.TrialStructure.TimeLimitSeconds)
            -> BehaviorSubject MaxTrialTimeSec

            DoubleProperty(Value=0)
            -> BehaviorSubject StartTime

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialStartWheelDistance

            Disable DoubleProperty(Value=0)
            -> Disable BehaviorSubject CurrAmp

            DoubleProperty(Value=500)
            -> BehaviorSubject DriftBeepsTillEnd

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialDistFloor

            BehaviorSubject<System.Double> TrialActive

            DoubleProperty(Value=1)
            -> BehaviorSubject TruncationPoint

            DoubleProperty(Value=1)
            -> BehaviorSubject StimulusActive

            BehaviorSubject<System.Int32> AudBin

            Annotation "ErrorTone loaded once"
              Text: Read into memory once, at Go (punishment.sound.path in the task file), instead of from disk on every punishment, so the relative path cannot fail mid-session if the working directory changes and crash the workflow on an error trial.

            Annotation Optogenetics
              Text: Zapit optogenetics, as in av-dome. ZapitCommands go to the Zapit include in Devices, which answers on ZapitReplies. OptoTrial holds the stimulation drawn for the current trial, set at ITI start in TaskLogic.

            BehaviorSubject<OptoTrial> OptoTrial

            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Punishment.Sound.Path)
            -> PropertyMapping(FileName)
            -> Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0)
            -> Take(Count=1)
            -> AsyncSubject ErrorTone
    SubscribeSubject Modality => #12
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble((it == "Auditory" || it == "Audiovisual"))
    -> BehaviorSubject AudioStimActive => #14
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble((it == "Visual" || it == "Audiovisual"))
    -> BehaviorSubject VisualStimActive => #16
    #14, #16 -> Zip => #17
    #11, #17 -> SubscribeWhen

    SubscribeSubject ExperimentGo
    -> OpenRigs.Control.ParameterValue(Name=TrainingStage)
    -> Bonsai.Scripting.Expressions.ExpressionTransform StageToInt
      Expression: Convert.ToInt32(it)
    -> BehaviorSubject TrainingStage

    SubscribeSubject TaskParams => #23
    SubscribeSubject TrainingStage => #24
    #23, #24 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform StageRowOf
      Expression: it.Item1.TrainingStages[Math.Min(Math.Max(it.Item2, 0), it.Item1.TrainingStages.Count - 1)]
    -> BehaviorSubject StageRow

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=RngSeed)
    -> CreateTaskRandom
    -> BehaviorSubject TaskRandom

GroupWorkflow Commands
  Description: The controller's commands, while ready or recording: rewards (flushes) on either spout, the spouts home, in and out, nudging each spout and the base by SpoutStepSize, and saving this mouse's spout positions. The valve and stepper logic is the old GUI's; only its sources changed, from buttons to OnCommand.
  Workflow
    Annotation Commands
      Text: Each command the controller may send (declared on ExperimentControl) raises the subject the valve and stepper logic below already listens to. Spout nudges pair as the GUI's buttons did: Left/Right Up/Down are motors 4/5, Left/Right Front/Back motors 2/3, Base Left/Right motor 1.

    SubscribeSubject ControlEvents => #1
    -> OpenRigs.Control.OnCommand(Name=RewardLeft)
    -> PublishSubject RewardLeft
    #1 -> OpenRigs.Control.OnCommand(Name=RewardRight)
    -> PublishSubject RewardRight
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsHome)
    -> PublishSubject SpoutsHome
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsIn)
    -> PublishSubject SpoutsIn
    #1 -> OpenRigs.Control.OnCommand(Name=SpoutsOut)
    -> PublishSubject SpoutsOut
    #1 -> OpenRigs.Control.OnCommand(Name=SaveSpoutPositions)
    -> PublishSubject SaveSpoutPositions
    #1 -> OpenRigs.Control.OnCommand(Name=LeftUp)
    -> PublishSubject Motor4_UP
    #1 -> OpenRigs.Control.OnCommand(Name=LeftDown)
    -> PublishSubject Motor4_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=RightUp)
    -> PublishSubject Motor5_UP
    #1 -> OpenRigs.Control.OnCommand(Name=RightDown)
    -> PublishSubject Motor5_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=LeftFront)
    -> PublishSubject Motor2_UP
    #1 -> OpenRigs.Control.OnCommand(Name=LeftBack)
    -> PublishSubject Motor2_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=RightFront)
    -> PublishSubject Motor3_UP
    #1 -> OpenRigs.Control.OnCommand(Name=RightBack)
    -> PublishSubject Motor3_DOWN
    #1 -> OpenRigs.Control.OnCommand(Name=BaseLeft)
    -> PublishSubject Motor1_UP
    #1 -> OpenRigs.Control.OnCommand(Name=BaseRight)
    -> PublishSubject Motor1_DOWN

    Annotation "Spout positions file"
      Text: This mouse's spout positions: <RigConfigDirectory>\calibration\LickSpoutPositions\<SubjectId>.csv, written by SaveSpoutPositions and read at Start (ReadPositions); a mouse without one gets rig.yml's lickSpoutDefaultPosition. Tom's mice's files were copied there from C:\RigConfigs\LickSpoutPositions, where auditory-vr-corridor keeps them, on BLUE-OPTO-2 on 9 Nov 2026 (BACKLOG); copy them on each other corridor rig before it runs a mouse of Tom's.

    SubscribeSubject RigConfigDirectory
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #36
      Expression: it + "\\calibration\\LickSpoutPositions\\"
    SubscribeSubject SubjectId => #37
    #36, #37 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 + it.Item2 + ".csv"
    -> BehaviorSubject SpoutPositionFileName

    GroupWorkflow ValveCommands(Description=ValveGUICallbacks)
        SubscribeSubject RewardLeft
        -> IntProperty(Value=1) => #1
        SubscribeSubject RewardRight
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge => #4
        SubscribeSubject RewardUl => #5
        #4, #5 -> WithLatestFrom
        -> MulticastSubject DeliverRewardCommand
        -> WorkflowOutput

    GroupWorkflow StepperCommands(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")
        -> GroupWorkflow "Position Update"(Description="Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Store IN position"(Text="Store IN position") => #12
            #11, #12 -> MulticastSubject StepperPosition_BothIn

            SubscribeSubject StepperPosition_BothIn => #14
            Annotation "Sends command with every update"(Text="Sends command with every update") => #15
            #14, #15 -> SelectMany "Send command when experiment not running" => #16
                WorkflowInput Source1 => #0
                SubscribeSubject StartExperiment => #1
                #0, #1 -> WithLatestFrom => #2
                -> Condition "Send Command?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject StepperPositionCommand => #5
                #2 -> Condition "Don't send?"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #7
                #5, #7 -> Merge => #8
                #2, #8 -> Sample
                -> WorkflowOutput
            GroupWorkflow "Init Positions"(Description="Init Positions") => #17
                SubscribeSubject RigConfigs
                -> MemberSelector(Selector=LickSpoutDefaultPosition) => #1
                Annotation Motor1_IN_position(Text=Motor1_IN_position) => #2
                #1, #2 -> MemberSelector(Selector=BaseTransverse)
                -> BehaviorSubject Motor1_Position => #4
                Annotation Motor2_IN_position(Text=Motor2_IN_position) => #5
                #1, #5 -> MemberSelector(Selector=LeftRadial)
                -> BehaviorSubject Motor2_Position => #7
                Annotation Motor3_IN_position(Text=Motor3_IN_position) => #8
                #1, #8 -> MemberSelector(Selector=RightRadial)
                -> BehaviorSubject Motor3_Position => #10
                Annotation Motor4_IN_position(Text=Motor4_IN_position) => #11
                #1, #11 -> MemberSelector(Selector=LeftElevation)
                -> BehaviorSubject Motor4_Position => #13
                Annotation Motor5_IN_position(Text=Motor5_IN_position) => #14
                #1, #14 -> MemberSelector(Selector=RightElevation)
                -> BehaviorSubject Motor5_Position => #16
                #4, #7, #10, #13, #16 -> Merge
                -> WorkflowOutput
            #16, #17 -> SubscribeWhen => #18
            SubscribeSubject SteppersZEROed => #19
            #18, #19 -> SubscribeWhen

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #22
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #25
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #28
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #31
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #34
            #22, #25, #28, #31, #34 -> CombineLatest
            -> MulticastSubject StepperPosition_BothOut

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #38
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #40
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #43
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #45
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #48
            #38, #40, #43, #45, #48 -> CombineLatest
            -> MulticastSubject StepperPosition_LeftIN

            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #52
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #55
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #57
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position
            -> Subtract(Operand=IntProperty(Value=1500)) => #60
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #62
            #52, #55, #57, #60, #62 -> CombineLatest
            -> MulticastSubject StepperPosition_RightIN

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")
        -> GroupWorkflow PositionButtonCallbacks(Description="PositionButtonCallbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject SpoutsHome => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject SpoutsIn => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject SpoutsOut => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")
        -> SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=150) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=150) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

    SubscribeSubject SpoutPositionFileName
    -> PropertyMapping(FileName) => #44
    SubscribeSubject SaveSpoutPositions => #45
    SubscribeSubject SpoutPositionFileName => #46
    #45, #46 -> SubscribeWhen => #47
    #44, #47 -> SelectMany WritePositions
        WorkflowInput Source1

        SubscribeSubject Motor1_Position => #1
        SubscribeSubject Motor2_Position => #2
        SubscribeSubject Motor3_Position => #3
        SubscribeSubject Motor4_Position => #4
        SubscribeSubject Motor5_Position => #5
        #1, #2, #3, #4, #5 -> Zip
        -> Format(Format="{0},{1},{2},{3},{4}", Selector="Item1,Item2,Item3,Item4,Item5") => #7
        ExternalizedMapping(FileName) => #8
        #7, #8 -> Bonsai.IO.CsvWriter(FileName=UNMAPPED, Delimiter=",", ListSeparator=;, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector=it)
        -> Take(Count=1)
        -> WorkflowOutput

    SubscribeSubject SpoutPositionFileName
    -> SelectMany ReadPositions
        WorkflowInput Source1
        -> Take(Count=1) => #1
        SubscribeSubject Motor5_Position => #13
        #1, #13 -> SubscribeWhen
        -> AsyncSubject _fName

        SubscribeSubject _fName
        -> PropertyMapping(FileName) => #4
        SubscribeSubject _fName
        -> FileExists => #6
        -> Condition True? => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #7 -> SelectMany LoadSpoutPositions
            WorkflowInput Source1

            ExternalizedMapping(FileName)
            -> Bonsai.IO.CsvReader(FileName=UNMAPPED, ScanPattern="%i,%i,%i,%i,%i", SkipRows=0) => #2
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject Motor1_Position => #4
            #2 -> MemberSelector(Selector=Item2)
            -> MulticastSubject Motor2_Position => #6
            #2 -> MemberSelector(Selector=Item3)
            -> MulticastSubject Motor3_Position => #8
            #2 -> MemberSelector(Selector=Item4)
            -> MulticastSubject Motor4_Position => #10
            #2 -> MemberSelector(Selector=Item5)
            -> MulticastSubject Motor5_Position => #12
            #4, #6, #8, #10, #12 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #9
        #6 -> Condition False? => #10
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #9, #10 -> Merge
        -> WorkflowOutput

GroupWorkflow Wheel
  Description: The wheel distance the task runs on, in cm. The Behavior board's include converts the encoder at rig.yml's wheelDiameterMm (BoardWheelDistanceCm); the task file's wheelDiameterMm, when set, replaces it, so a track takes as many wheel turns as it did in Tom Childs' workflow, which converted at 75 mm, the measured wheel (every dome's rig.yml has said 75 since 9 Nov 2026). Null in the task file: rig.yml's.
  Workflow
    SubscribeSubject BoardWheelDistanceCm => #0
    SubscribeSubject TaskParams
    -> MemberSelector(Selector=WheelDiameterMm) => #2
    SubscribeSubject BehaviorBoard-Main
    -> MemberSelector(Selector=Settings.RunningWheel.WheelDiameterMm) => #4
    #2, #4 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform DistanceScale => #6
      Expression: it.Item1.HasValue ? it.Item1.Value / Convert.ToDouble(it.Item2) : 1.0
    #0, #6 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform ScaleDistance
      Expression: it.Item1 * it.Item2
    -> PublishSubject WheelDistanceCm

GroupWorkflow ComputeRewardZone
    SubscribeSubject StageRow
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: Convert.ToDouble(it.RewardFloorHz)
    -> MulticastSubject RewardFloorFreq

    SubscribeSubject StageRow
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: Convert.ToDouble(it.RewardCeilingHz)
    -> MulticastSubject RewardCeilFreq

    SubscribeSubject TrackLength => #6
    SubscribeSubject TaskParams => #7
    -> MemberSelector(Selector=SweepStartHz) => #8
    #7 -> MemberSelector(Selector=SweepEndHz) => #9
    SubscribeSubject RewardFloorFreq => #10
    #6, #8, #9, #10 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardFloorVirtualPos
      Expression: it.Item1 * Math.Log(it.Item4 / it.Item2) / Math.Log(it.Item3 / it.Item2)
    -> MulticastSubject RewardFloorVirtualPos

    SubscribeSubject TrackLength => #14
    SubscribeSubject TaskParams => #15
    -> MemberSelector(Selector=SweepStartHz) => #16
    #15 -> MemberSelector(Selector=SweepEndHz) => #17
    SubscribeSubject RewardCeilFreq => #18
    #14, #16, #17, #18 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform RewardCeilVirtualPos
      Expression: it.Item1 * Math.Log(it.Item4 / it.Item2) / Math.Log(it.Item3 / it.Item2)
    -> MulticastSubject RewardCeilVirtualPos

GroupWorkflow LickCounter(Description="Increments lick count on each lick")
    SubscribeSubject LickStateLeft
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject LickCount => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject LickCount
    -> WorkflowOutput

GroupWorkflow TaskState
    Timer(DueTime=PT0S, Period=PT0.25S) => #0
    SubscribeSubject TrainingStage => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TrialNumber => #3
    #2, #3 -> WithLatestFrom => #4
    SubscribeSubject InterTrialInterval => #5
    #4, #5 -> WithLatestFrom => #6
    SubscribeSubject WheelDistanceCm => #7
    #6, #7 -> WithLatestFrom => #8
    SubscribeSubject TrialDistance => #9
    #8, #9 -> WithLatestFrom => #10
    SubscribeSubject MouseVirtualPosition => #11
    #10, #11 -> WithLatestFrom => #12
    SubscribeSubject CurrFreq => #13
    #12, #13 -> WithLatestFrom => #14
    SubscribeSubject TrackLength => #15
    #14, #15 -> WithLatestFrom => #16
    SubscribeSubject RewardFloorFreq => #17
    #16, #17 -> WithLatestFrom => #18
    SubscribeSubject RewardCeilFreq => #19
    #18, #19 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "Stage:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
              " Trial:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
              " ITI:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds.ToString("F0") + "s" + " TotDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
              " TrialDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
              " Position:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
              " Freq:" + Convert.ToInt32(it.Item1.Item1.Item1.Item2).ToString() + "Hz" +
              " Track:" + Convert.ToInt32(it.Item1.Item1.Item2).ToString() + "cm" +
              " Zone:" + Convert.ToInt32(it.Item1.Item2).ToString() + "-" + Convert.ToInt32(it.Item2).ToString() + "Hz"
    -> WorkflowOutput

GroupWorkflow HarpClock
  Description: Harp time (seconds on the synchronised Harp clock, as in the Harp binaries) of the latest Behavior board AnalogData sample, about every 1 ms. Timestamps BonsaiData_Trial and BonsaiData_StimulusState.
  Workflow
    BehaviorSubject<System.Double> HarpTime

    DoubleProperty(Value=NaN)
    -> MulticastSubject HarpTime

    SubscribeSubject BehaviorBoard-Main.Data
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Seconds)
    -> MulticastSubject HarpTime

GroupWorkflow TrialEventTimes
  Description: Harp times of each trial's ITI start (TrialActive set to 1), trial start (StartTime set, track position zero) and outcome (TrialActive set to 0), read by TrialRow. Per-trial values are cleared at each ITI start.
  Workflow
    BehaviorSubject<System.Double> ITIStartHarp
    BehaviorSubject<System.Double> TrialStartHarp
    BehaviorSubject<System.Double> StimulusOnsetTime
    BehaviorSubject<System.Double> OutcomeHarp
    BehaviorSubject<System.Boolean> WasPunished

    DoubleProperty(Value=NaN) => #5
    -> MulticastSubject ITIStartHarp
    #5 -> MulticastSubject TrialStartHarp
    #5 -> MulticastSubject StimulusOnsetTime
    #5 -> MulticastSubject OutcomeHarp

    BooleanProperty(Value=false)
    -> MulticastSubject WasPunished

    SubscribeSubject TrialActive
    -> Condition IsITIStart => #13
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 1.0
        -> WorkflowOutput
    SubscribeSubject HarpTime => #14
    #13, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject ITIStartHarp
    #13 -> DoubleProperty(Value=NaN) => #18
    -> MulticastSubject TrialStartHarp
    #18 -> MulticastSubject StimulusOnsetTime
    #18 -> MulticastSubject OutcomeHarp
    #13 -> BooleanProperty(Value=false)
    -> MulticastSubject WasPunished

    SubscribeSubject TrialActive
    -> Condition IsOutcome => #25
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == 0.0
        -> WorkflowOutput
    SubscribeSubject HarpTime => #26
    #25, #26 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject OutcomeHarp

    SubscribeSubject StartTime
    -> Skip(Count=1) => #31
    SubscribeSubject HarpTime => #32
    #31, #32 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject TrialStartHarp

GroupWorkflow Audio
  Description: The dome speakers (speakerArray.device in rig.yml), opened 3 s after start as av-dome does: an error while the sound card boots can blue-screen the PC. One mixer source each for the tone pips (Buffer), the reward tone and the error tone, so they play over each other, and the background noise, looped from Start and faded in to the task's level at Go.
  Workflow
    GroupWorkflow Mixer
        GroupWorkflow MixerDevice => #0
            SubscribeSubject RigConfigs
            -> PropertyMapping
              HostApi(Selector=SpeakerArray.Device.HostApi)
              DeviceName(Selector=SpeakerArray.Device.DeviceName)
              SampleRate(Selector=SpeakerArray.Device.SampleRate)
              SuggestedLatency(Selector=SpeakerArray.Device.SuggestedLatency)
            -> Bonsai.Mixer.CreateMixerContext(HostApi="Windows WDM-KS", DeviceName="Speakers (XMOS xCORE-200 MC (UAC2.0))", SampleRate=48000, ChannelCount=nil, SuggestedLatency=0.002)
            -> Bonsai.Mixer.StartMixer
            -> BehaviorSubject Mixer
        Annotation "Any errors during boot up can cause blue screens, so we delay this a bit"(Text="Any errors during boot up can cause blue screens, so we delay this a bit") => #1
        #0, #1 -> DelaySubscription(DueTime=PT3S)
        -> WorkflowOutput

    SubscribeSubject Buffer => #1
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #3
    #1, #3 -> Bonsai.Mixer.AppendBuffer

    Annotation "One mixer source per sound so they play over each other. AppendBuffer only completes when its source does, so it stays here - trial branches multicast to RewardBuffer and ErrorBuffer"
      Text: One mixer source per sound so they play over each other. AppendBuffer only completes when its source does, so it stays here - trial branches multicast to RewardBuffer and ErrorBuffer

    SubscribeSubject RewardBuffer => #6
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #8
    #6, #8 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject ErrorBuffer => #10
    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=false, Playing=true, Gain=1) => #12
    #10, #12 -> Bonsai.Mixer.AppendBuffer

    Annotation "Background white noise - 60 s loop for the whole session, fades in over 2 s"(Text="Background white noise - 60 s loop for the whole session, fades in over 2 s")

    SubscribeSubject Mixer
    -> Bonsai.Mixer.CreateSource(Looping=true, Playing=true, Gain=0)
    -> BehaviorSubject BackgroundSource

    Bonsai.Dsp.MatrixReader(Path=./waveforms/background_noise.bin, Offset=0, SampleRate=0, ChannelCount=1, BufferLength=0, Depth=F32, Layout=RowMajor)
    -> Take(Count=1) => #19
    SubscribeSubject BackgroundSource => #20
    #19, #20 -> Bonsai.Mixer.AppendBuffer

    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform BackgroundNoiseGain => #23
      Description: Source gain that makes the noise RMS BackgroundNoiseLevel x the beep RMS. Beeps peak at ToneAmplitude x ToneAmplitude (gen_session writes them at ToneAmplitude and WaveformDict rescales them by ToneAmplitude again) and a beep RMS is half its peak. The noise file is uniform white noise in [-1, 1], RMS 1/sqrt(3)
      Expression: Convert.ToSingle(it.BackgroundNoiseLevel * 0.5 * it.ToneAmplitude * it.ToneAmplitude * Math.Sqrt(3))
    SubscribeSubject BackgroundSource => #24
    #23, #24 -> CombineLatest
    -> InputMapping(Selector=Item2, Gain(Selector=Item1))
    -> Bonsai.Mixer.SetGain(Gain=0, Duration=2)

GroupWorkflow TaskLogic
    Defer BeepTimer => #0
        GroupWorkflow HarpBeat => #0
          Description: Counts beeps (0, 1, 2, ...) every 50 ms of the Harp clock: every 50th Behavior board AnalogData sample (sent at 1 kHz), the first one straight away. This replaces a 50 ms rx:Timer, which Windows' 15.6 ms timer steps stretched to about 60 ms with jitter. ObserveOn hands each beep to its own thread, as the timer did, so the board's thread only counts samples.
          Workflow
            SubscribeSubject HarpTime
            -> Skip(Count=1)
            -> ElementIndex
            -> Condition Every50thSample
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Index % 50 == 0
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Convert.ToInt64(it.Index / 50)
            -> ObserveOn(Scheduler=NewThreadScheduler)
            -> WorkflowOutput
        SubscribeSubject TaskRandom
        -> Take(Count=1) => #2
        SubscribeSubject TaskParams => #3
        #2, #3 -> WithLatestFrom
        -> DrawIti
        -> MulticastSubject InterTrialInterval
        -> GroupWorkflow Monitor => #7
            ExternalizedMapping(Value)
            -> StringProperty(Value=StartITI)
            -> Take(Count=1) => #2
            WorkflowInput Source1
            -> Materialize => #4
            #2, #4 -> CombineLatest
            -> Bonsai.IO.WriteLine
            -> MemberSelector(Selector=Item2)
            -> Dematerialize
            -> WorkflowOutput
        -> SelectMany InitITI => #8
            WorkflowInput Source1
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S)
            -> SelectMany WaitForNoLicks
              Description: On a stage with quiescent: holds the next trial until the animal has gone without licking for trialStructure.quiescentSeconds (Throttle's DueTime), so consummatory licking from the previous reward cannot carry into the next response window. Deliberately uncapped - a mouse that keeps licking keeps delaying the next trial. Other stages pass straight through. The seeded Merge is required: without it Throttle never fires for a mouse that does not lick at all, and the task would stall.
              Workflow
                SubscribeSubject LickStateLeft
                -> Condition IsLick => #1
                    WorkflowInput Source1
                    -> WorkflowOutput
                BooleanProperty(Value=true) => #2
                #1, #2 -> Merge => #3
                WorkflowInput Source1 => #6
                -> Condition Quiescent? => #7
                    SubscribeSubject StageRow => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.Quiescent
                    -> WorkflowOutput
                #6 -> Condition NoQuiescent?
                    SubscribeSubject StageRow => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> Sample
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: !it.Quiescent
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #10
                SubscribeSubject TaskParams
                -> Bonsai.Scripting.Expressions.ExpressionTransform QuiescentWait
                  Expression: TimeSpan.FromSeconds(it.TrialStructure.QuiescentSeconds)
                -> PropertyMapping(DueTime) => #15
                #3, #15 -> Throttle(DueTime=PT1S)
                -> Take(Count=1) => #5
                #5, #7 -> SubscribeWhen => #8
                #8, #10 -> Merge
                -> WorkflowOutput
            -> Disable Delay(DueTime=PT0.5S)
            -> WorkflowOutput
        #7 -> SelectMany ThisTrialOpto => #57
          Description: Waits for the stimulation drawn for the trial that is starting (OptoTrial is drawn when TrialNumber goes up), so ArmZapit never acts on the previous trial's draw.
          Workflow
            WorkflowInput Source1

            SubscribeSubject OptoTrial => #1
            SubscribeSubject TrialNumber => #2
            #1, #2 -> CombineLatest
            -> Condition ThisTrial?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1.TrialNumber == Item2
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        #8, #57 -> Zip
        -> MemberSelector(Selector=Item2)
        -> SelectMany ArmZapit
          Description: Hardware-triggered rigs (rig.yml zapit.hardwareTriggered): once the ITI has ended, sends this trial's StartStimulus - laser on, or laser off on a laser-off trial - so Zapit loads the waveform and waits for the trigger line's rising edge OptoOnset makes at beep 0, and passes only once Zapit has answered that it is armed with the requested condition and laser state. Continuous waveform (no StimDuration): Zapit ignores StopStimulus for a timed stimulus, so LaserOnUntilOutcome stops it. Arming after the ITI keeps Zapit armed for only the round trip, so the trial waits the same few tens of ms on every trial. Rigs without hardware triggering, and experiments without optogenetics, pass straight through.
          Workflow
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject settings => #3
            SubscribeSubject RigConfigs => #4
            #3, #4 -> Zip => #5
            -> Condition HardwareArming? => #6
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1.OptogeneticCondition > 0 && Item2.Zapit.HardwareTriggered
                -> WorkflowOutput
            SubscribeSubject settings
            -> PropertyMapping(ConditionNumber(Selector=OptogeneticCondition), LaserOn(Selector=OptogeneticEnabled), LaserPower(Selector=OptogeneticLaserPowerMw)) => #8
            #6, #8 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=true, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
            -> MulticastSubject ZapitCommands => #10
            SubscribeSubject ZapitReplies
            -> Skip(Count=1)
            -> Condition StartStimulusReply?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: CommandCode == 1
                -> WorkflowOutput
            -> Take(Count=1) => #14
            #14, #10 -> Zip
            -> MemberSelector(Selector=Item1) => #16
            SubscribeSubject settings => #17
            #16, #17 -> WithLatestFrom => #18
            -> Condition ArmedAsAsked?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !Item1.IsError && Item1.Value == Item2.OptogeneticCondition && Item1.LaserOn == (Item2.OptogeneticEnabled ? 1 : 0)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2) => #20
            #18 -> Condition ArmedOtherwise?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !Item1.IsError && !(Item1.Value == Item2.OptogeneticCondition && Item1.LaserOn == (Item2.OptogeneticEnabled ? 1 : 0))
                -> WorkflowOutput
            -> Format
              Format="Zapit armed condition {0} with laserOn {1}, but this trial asked for condition {2} with laser on = {3}."
              Selector="Item1.Value,Item1.LaserOn,Item2.OptogeneticCondition,Item2.OptogeneticEnabled"
            -> ThrowError
            #5 -> Condition NoArmingNeeded?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !(Item1.OptogeneticCondition > 0 && Item2.Zapit.HardwareTriggered)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #25
            #20, #25 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> GroupWorkflow Monitor => #9
            ExternalizedMapping(Value)
            -> StringProperty(Value=FinishedITI)
            -> Take(Count=1) => #2
            WorkflowInput Source1
            -> Materialize => #4
            #2, #4 -> CombineLatest
            -> Bonsai.IO.WriteLine
            -> MemberSelector(Selector=Item2)
            -> Dematerialize
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #10
        #0, #10 -> SubscribeWhen
        -> MulticastSubject BeepTimer => #12
        -> WorkflowOutput
        #12 -> Condition FirstBeep?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == 0
            -> WorkflowOutput
        -> SelectMany OptoOnset
          Description: At beep 0, the trial's start: sets zapit.triggerLine high on every trial (as av-dome's StartLaser pulses it), which on a hardware-triggered rig starts the stimulus ArmZapit loaded (Zapit starts on the rising edge), and on trials with a Zapit condition (every trial of an optogenetics experiment) runs LaserOnUntilOutcome, which stops it. The board does not pulse that line (WithoutPulseLine), so it stays high, and the masking LEDs wired to it stay lit, until it is cleared (ZapitTriggerClear) 1 s after the outcome: past the laser's ramp-down (at most 500 ms, ZapitConditions) and Zapit's delay in stopping, and before the next trial's beep 0, at least 2 s after the outcome (Tom Childs and Pip, 10 Nov 2026; the clear is timed by Bonsai, so a few ms of jitter, and the Behavior board's log has the exact time).
          Workflow
            WorkflowInput Source1

            SubscribeSubject OptoTrial
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject settings => #4
            SubscribeSubject RigConfigs => #5
            #4, #5 -> Zip => #6
            -> Disable Condition HardwareTriggeredOptoTrial?
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1)
                -> MemberSelector(Selector=OptogeneticEnabled) => #2
                #0 -> MemberSelector(Selector=Item2)
                -> MemberSelector(Selector=Zapit.HardwareTriggered) => #4
                #2, #4 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2.Zapit.TriggerLine) => #8
            -> MulticastSubject TriggerPulse
            #6 -> Condition ZapitTrial?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1.OptogeneticCondition > 0
                -> WorkflowOutput
            -> SelectMany LaserOnUntilOutcome
              Description: One optogenetics-experiment trial, from beep 0 to the stop. On a hardware-triggered rig the trigger line's rising edge above starts the waveform ArmZapit loaded (onset is in the Behavior board's Harp log); a rig without hardware triggering (test mice only) sends StartStimulus now and Zapit starts on receipt. Laser-off trials do exactly the same with the laser off. The stimulus is stopped once, at the trial outcome (TrialActive back to 0) or after OptogeneticMaxDuration (laserMaxSeconds), whichever comes first; the laser then ramps down over the condition's offRampDownDuration_ms.
              Workflow
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject trial

                SubscribeSubject trial
                -> Condition Software? => #4
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: !Item2.Zapit.HardwareTriggered
                    -> WorkflowOutput
                SubscribeSubject trial
                -> PropertyMapping(ConditionNumber(Selector=Item1.OptogeneticCondition), LaserOn(Selector=Item1.OptogeneticEnabled), LaserPower(Selector=Item1.OptogeneticLaserPowerMw)) => #6
                #4, #6 -> CreateStartStimulus(ConditionNumber=0, LaserOn=true, HardwareTriggered=false, Logging=true, StimDuration=0, LaserPower=0, StartDelay=0)
                -> MulticastSubject ZapitCommands

                SubscribeSubject trial
                -> Bonsai.Scripting.Expressions.ExpressionTransform MaxDuration
                  Expression: TimeSpan.FromSeconds(it.Item1.OptogeneticMaxDuration)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT12S, Period=PT0S)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
                  Expression: "MaxDuration"
                SubscribeSubject TrialActive
                -> Condition Outcome?
                    WorkflowInput Source1
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it == 0.0
                    -> WorkflowOutput
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
                  Expression: "Outcome"
                #13, #16 -> Merge
                -> Take(Count=1) => #18
                -> CreateStopStimulus
                -> MulticastSubject ZapitCommands
                #18 -> WorkflowOutput
            SubscribeSubject TrialActive
            -> Condition Outcome?
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it == 0.0
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT1S) => #15
            #15, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject ZapitTriggerClear
        #9 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Take(Count=1)
        -> MulticastSubject StartTime
        #9 -> IntProperty(Value=0)
        -> MulticastSubject LickCount
        SubscribeSubject WheelDistanceCm => #18
        #9, #18 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> MulticastSubject TrialStartWheelDistance
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 0.0
        -> MulticastSubject TrialDistFloor
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: false
        -> MulticastSubject TrialEnded
        SubscribeSubject ZapitCommands => #65
        #7, #65 -> WithLatestFrom
        -> Condition StimulusLeftOn? => #67
          Description: Optogenetics experiments only (nothing is ever sent to ZapitCommands otherwise). At ITI start the last command sent to Zapit should be the previous trial's StopStimulus. If it is a StartStimulus, that trial ended without reaching its stop (for example the trial loop restarted without an outcome), so the continuous stimulus may still be playing: send StopStimulus now, long before this trial's StartStimulus.
          Workflow
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2.Command == "StartStimulus"
            -> WorkflowOutput
        -> CreateStopStimulus
        -> MulticastSubject ZapitCommands
        #67 -> Format
          Format="Zapit: the previous trial ended without a StopStimulus (last command sent: {0}), so StopStimulus was sent at the start of this ITI."
          Selector=Item2
        -> Bonsai.IO.WriteLine

        SubscribeSubject TrialNumber
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNumber

        IntProperty(Value=0)
        -> MulticastSubject CurrFreq

        BooleanProperty(Value=false)
        -> MulticastSubject WasRewarded

        BooleanProperty(Value=false)
        -> MulticastSubject WasTimeout

        BooleanProperty(Value=false)
        -> MulticastSubject HitEndOfTrack

        DoubleProperty(Value=0)
        -> MulticastSubject CurrFreqV

        DoubleProperty(Value=0)
        -> MulticastSubject TrialDistFloor

        SubscribeSubject WheelDistanceCm
        -> Take(Count=1)
        -> MulticastSubject TrialStartWheelDistance

        DoubleProperty(Value=1)
        -> MulticastSubject TrialActive

        DoubleProperty(Value=1)
        -> MulticastSubject StimulusActive

        Annotation Optogenetics
          Text:
            At ITI start InitialiseOptoTrial draws this trial's Zapit command: after the first trialsBeforeLaser trials, laser on with probability laserOnProbability, otherwise a laser-off trial, each with a condition from the Zapit conditions file, so galvos and masking light are the same on every trial. On hardware-triggered rigs ArmZapit sends it once the ITI has ended and waits for Zapit to confirm; OptoOnset raises the trigger line at beep 0, laserToStimulusSeconds before the first tone pip, and LaserOnUntilOutcome stops the stimulus at the outcome or after laserMaxSeconds. Zapit only gets continuous stimuli.

            StimulusLeftOn? (from the StartITI monitor): if a trial ever ends without its StopStimulus, the next ITI start sends one.

        SubscribeSubject TaskParams => #53
        SubscribeSubject TrialNumber
        -> Take(Count=1) => #64
        #64, #53 -> WithLatestFrom
        -> InitialiseOptoTrial(Seed=-1)
        -> MulticastSubject OptoTrial
    SubscribeSubject MouseVirtualPosition => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TaskParams => #5
    -> MemberSelector(Selector=PositionStepCm) => #6
    #5 -> MemberSelector(Selector=SweepStartHz) => #10
    #5 -> MemberSelector(Selector=SweepEndHz) => #11
    Defer "Random Track Length" => #9
        SubscribeSubject TaskRandom
        -> Take(Count=1) => #1
        SubscribeSubject TaskParams => #2
        #1, #2 -> WithLatestFrom
        -> DrawTrackLength => #4
        SubscribeSubject StageRow => #5
        #4, #5 -> WithLatestFrom => #6
        SubscribeSubject TaskParams => #7
        #6, #7 -> WithLatestFrom => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform ScaleForStage
          Expression: it.Item1.Item2.TrackLengthScale * Convert.ToDouble(it.Item1.Item1.Item1)
        -> MulticastSubject TrackLength
        -> WorkflowOutput
        #8 -> Bonsai.Scripting.Expressions.ExpressionTransform TruncationPoint
          Expression: it.Item1.Item2.TruncatedTrialFraction > 0 && it.Item1.Item1.Item2 < it.Item1.Item2.TruncatedTrialFraction && it.Item2.Truncation.SweepFractions.Count > 0 ? it.Item2.Truncation.SweepFractions[Convert.ToInt32(Math.Floor(it.Item1.Item1.Item2 / it.Item1.Item2.TruncatedTrialFraction * it.Item2.Truncation.SweepFractions.Count))] : 1.0
        -> MulticastSubject TruncationPoint
    #9, #10, #11 -> Zip => #12
    GroupWorkflow IsTrialEnd(Description="Determines trial end based on shaping stage")
        Disable SubscribeSubject CurrFreq => #0
        Disable SubscribeSubject RewardFloorFreq => #1
        #0, #1 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
          Description: Superseded by the TrialStarted gate below. This only checked that CurrFreq was below the reward floor, which is also true during the inter-trial interval (CurrFreq is reset to 0 there), so it armed the trial-end detector before the tone existed and let consummatory licks abort the next trial.
          Workflow
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput

        SubscribeSubject StageRow => #4
        SubscribeSubject BeepTimer => #5
        SubscribeSubject TaskParams
        -> Bonsai.Scripting.Expressions.ExpressionTransform StimulusStartBeep
          Description: Skip count before lick detection starts: 1 as before, or laserToStimulusSeconds / 50 ms in an optogenetics experiment. As before, it arms at the first tone pip on trial 1 and one beep (50 ms) earlier from trial 2, because BeepTimer replays the previous trial's last beep to the new subscription.
          Expression: it.Optogenetics.UseZapit ? Convert.ToInt32(Math.Round(it.Optogenetics.LaserToStimulusSeconds / 0.05)) : 1
        -> PropertyMapping(Count) => #47
        #5, #47 -> Skip(Count=1)
        -> Take(Count=1) => #7
        #4, #7 -> SubscribeWhen
        -> Take(Count=1) => #9
        -> Condition ZoneEntryRewarded?
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
              Expression: !it.LickToReward
            -> WorkflowOutput
        -> SelectMany FreqInRewZone => #11
            SubscribeSubject CurrFreq => #0
            SubscribeSubject RewardFloorFreq => #1
            #0, #1 -> WithLatestFrom
            -> Condition FreqAboveThreshold
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 >= it.Item2
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #9 -> Condition LickRewarded?
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.LickToReward && it.WrongLickLimit == 0
            -> WorkflowOutput
        -> SelectMany LickDetected
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Condition LickOnTarget => #14
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        #9 -> Condition LickWithLimit?
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: it.LickToReward && it.WrongLickLimit > 0
            -> WorkflowOutput
        -> SelectMany LickDetected => #16
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Condition LickOnTarget => #17
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
            -> WorkflowOutput
        #16 -> Condition LickOffTarget
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
              Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
            -> WorkflowOutput
        -> Condition WrongLicksAboveLimit => #19
            SubscribeSubject LickCount => #0
            SubscribeSubject StageRow
            -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
              Expression: Convert.ToDouble(it.WrongLickLimit)
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput

            Disable SubscribeSubject LickCount => #6
            Disable SubscribeSubject TaskParams => #7
            Disable SubscribeSubject StageRow => #8
            #7, #8 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
              Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 >= 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : Convert.ToDouble(1000)
            #6, #10 -> Disable WithLatestFrom
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput
        #11, #14, #17, #19 -> Merge
        -> WorkflowOutput

        Disable SubscribeSubject StageRow => #22
        Disable SubscribeSubject CurrFreq => #23
        Disable SubscribeSubject RewardFloorFreq => #24
        #23, #24 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1) => #27
        #22, #27 -> Disable SubscribeWhen
        -> Disable Take(Count=1) => #29
        -> Disable Condition TimeRemaining => #30
            SubscribeSubject BeepTimer => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject MaxTrialTimeSec => #3
            #2, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 < it.Item2)
            -> WorkflowOutput
        -> Disable Condition IsStage1or2
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
              Expression: ((it >= 1) && (it <= 2))
            -> WorkflowOutput
        -> Disable SelectMany FreqInRewZone => #32
            SubscribeSubject CurrFreq => #0
            SubscribeSubject RewardFloorFreq => #1
            #0, #1 -> WithLatestFrom
            -> Condition FreqAboveThreshold
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 >= it.Item2
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        #30 -> Disable Condition IsStage3
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> Disable SelectMany LickDetected
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Disable Condition LickOnTarget => #35
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        #30 -> Disable Condition IsStage4or5or6
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: ((it >= 4) && (it <= 6))
            -> WorkflowOutput
        -> Disable SelectMany LickDetected => #37
            SubscribeSubject LickStateLeft
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        -> Disable Condition LickOnTarget => #38
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
            -> WorkflowOutput
        #37 -> Disable Condition LickOffTarget
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
              Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
            -> WorkflowOutput
        -> Disable Condition WrongLicksAboveLimit => #40
            SubscribeSubject LickCount => #0
            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
              Expression: Convert.ToDouble(it.WrongLickLimit)
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput

            Disable SubscribeSubject LickCount => #6
            Disable SubscribeSubject TaskParams => #7
            Disable SubscribeSubject StageRow => #8
            #7, #8 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
              Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 >= 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : Convert.ToDouble(1000)
            #6, #10 -> Disable WithLatestFrom
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput
        #29 -> Disable Condition NoTimeRemaining
            SubscribeSubject BeepTimer => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject MaxTrialTimeSec => #3
            #2, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true) => #42
        #32, #35, #38, #40, #42 -> Disable Merge
        -> Disable WorkflowOutput
    -> GroupWorkflow Monitor => #27
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsTrialEnd)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    GroupWorkflow IsTimeOut
        Disable SubscribeSubject BeepTimer
        -> Disable Condition NoTimeRemaining
            Disable SubscribeSubject BeepTimer => #0
            Disable SubscribeSubject MaxTrialTimeSec => #1
            #0, #1 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #5
            SubscribeSubject MaxTrialTimeSec => #6
            #5, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput

        SubscribeSubject MaxTrialTimeSec
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT12S) => #6
        SubscribeSubject BeepTimer => #7
        SubscribeSubject TaskParams
        -> Bonsai.Scripting.Expressions.ExpressionTransform StimulusStartBeep
          Description: Skip count before the timeout starts: 1 as before, or laserToStimulusSeconds / 50 ms in an optogenetics experiment. As before, it arms at the first tone pip on trial 1 and one beep (50 ms) earlier from trial 2, because BeepTimer replays the previous trial's last beep to the new subscription.
          Expression: it.Optogenetics.UseZapit ? Convert.ToInt32(Math.Round(it.Optogenetics.LaserToStimulusSeconds / 0.05)) : 1
        -> PropertyMapping(Count) => #17
        #7, #17 -> Skip(Count=1)
        -> Take(Count=1) => #9
        #6, #9 -> SubscribeWhen
        -> Condition TimeLimit?
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNotStage1-3
              Expression: it.TimeLimit
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject WasTimeout
        -> WorkflowOutput
    -> GroupWorkflow Monitor => #29
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsTimeOut)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    GroupWorkflow IsEndOfTrack
        Disable SubscribeSubject BeepTimer
        -> Disable Condition NoTimeRemaining
            Disable SubscribeSubject BeepTimer => #0
            Disable SubscribeSubject MaxTrialTimeSec => #1
            #0, #1 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput

            WorkflowInput Source1 => #5
            SubscribeSubject MaxTrialTimeSec => #6
            #5, #6 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput

        SubscribeSubject MouseVirtualPosition => #4
        SubscribeSubject TrackLength => #5
        #4, #5 -> CombineLatest
        -> Condition TrackEndEnds?
            SubscribeSubject StageRow => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNotStage1or2
              Expression: it.TrackEndEndsTrial
            -> WorkflowOutput
        -> Condition IsEqual
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: (it.Item1 == it.Item2)
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> MulticastSubject HitEndOfTrack
        -> WorkflowOutput
    -> GroupWorkflow Monitor => #31
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsEndOfTrack)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    #27, #29, #31 -> Merge => #32
    SubscribeSubject StartFreqV => #38
    SubscribeSubject EndFreqV => #39
    #9, #38, #39 -> Zip => #40
    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform StimulusStartBeep
      Description: First beep with a tone pip: 1 as before, or laserToStimulusSeconds / 50 ms in an optogenetics experiment, so the laser (on at beep 0) leads the stimulus by laserToStimulusSeconds on every trial of that experiment, laser-on or laser-off.
      Expression: it.Optogenetics.UseZapit ? Convert.ToInt32(Math.Round(it.Optogenetics.LaserToStimulusSeconds / 0.05)) : 1
    -> PropertyMapping(Count) => #68
    #2, #68 -> Skip(Count=1) => #3
    -> MemberSelector(Selector=Item2) => #4
    #4, #6 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Quantize Wheel Distance" => #8
      Expression: Math.Round(it.Item1/it.Item2) * it.Item2
    #8, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "cm to Hz" => #14
      Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item2.Item1 <= 0 ? 0 : it.Item1 / it.Item2.Item1)))
    -> Condition DriftStage?
        SubscribeSubject StageRow
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it.FrequencyDrift
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsFirstStageSound)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow AddFreqDriftA => #17
        WorkflowInput Source1 => #0
        SubscribeSubject TaskParams => #1
        -> MemberSelector(Selector=SweepStartHz) => #2
        -> PropertyMapping(Value) => #3
        #0, #3 -> Subtract(Operand=DoubleProperty(Value=2000))
        -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #5
          Expression: it
        SubscribeSubject BeepTimer => #6
        #1 -> MemberSelector(Selector=SweepEndHz) => #7
        SubscribeSubject DriftBeepsTillEnd => #8
        #2, #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #10
          Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
        #6, #10 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #12
          Expression: Math.Pow(it.Item2, it.Item1)
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=SweepStartHz) => #14
        #12, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
          Expression: it.item2 * it.Item1
        -> PropertyMapping(Value) => #17
        #5, #17 -> Add(Operand=DoubleProperty(Value=2976.4527660424314))
        -> WorkflowOutput
    #14 -> Condition NoDriftStage?
        SubscribeSubject StageRow
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: !it.FrequencyDrift
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor => #19
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsNOTFirstStageSound)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    #17, #19 -> Merge
    -> MulticastSubject CurrFreq
    -> GroupWorkflow MakeSoundwave
        WorkflowInput Source1 => #0
        SubscribeSubject TaskParams => #1
        #0, #1 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform GetPercentProgress => #3
          Expression: Convert.ToInt32(Math.Max(0.0, Math.Min(Convert.ToDouble(it.Item2.SweepSteps) - 1.0, Convert.ToDouble(it.Item1) <= 0.0 ? 0.0 : Math.Round(Math.Log(Convert.ToDouble(it.Item1) / Convert.ToDouble(it.Item2.SweepStartHz)) / Math.Log(Convert.ToDouble(it.Item2.SweepEndHz) / Convert.ToDouble(it.Item2.SweepStartHz)) * (Convert.ToDouble(it.Item2.SweepSteps) - 1.0)))))
        SubscribeSubject WaveformDict => #4
        #3, #4 -> WithLatestFrom
        -> InputMapping(Selector=Item2, Value(Selector=Item1))
        -> Index(Operand=IntProperty(Value=97))
        -> WorkflowOutput
        #3 -> MulticastSubject AudBin
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=MadeSound)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow SilenceAfterTruncation
      Description: Silences the tone past the truncation point on truncated trials (a stage's truncatedTrialFraction of its trials; row 5, Tom Childs' stage 6, in the task file)
      Workflow
        WorkflowInput Source1 => #0
        SubscribeSubject CurrFreq => #1
        SubscribeSubject TruncationPoint => #2
        SubscribeSubject TaskParams => #3
        #1, #2, #3 -> CombineLatest => #4
        #0, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform StimulusActive => #6
          Description: Tone's sweep fraction, compared with the truncation point. SweepEndHz / SweepStartHz is divided as whole numbers (25000 / 2000 = 12), exactly as in 'cm to Hz', so the fraction matches how the tone actually sweeps (2-24 kHz) and equals the grating's in HideAfterTruncation. Rounded to 3 decimals in both, so CurrFreq's whole-Hz rounding cannot put the tone and grating a beep apart.
          Expression: new(it.Item1 as Buffer, (it.Item2.Item2 >= 1 || Math.Round(Math.Log(Convert.ToDouble(it.Item2.Item1) / Convert.ToDouble(it.Item2.Item3.SweepStartHz)) / Math.Log(Convert.ToDouble(it.Item2.Item3.SweepEndHz / it.Item2.Item3.SweepStartHz)), 3) < it.Item2.Item2 ? 1.0 : 0.0) as Gain)
        -> MemberSelector(Selector=Gain)
        -> MulticastSubject StimulusActive
        #6 -> InputMapping(Selector=Buffer, RangeMax(Selector=Gain))
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear)
        -> WorkflowOutput
    -> MulticastSubject Buffer => #25
    #25, #32 -> TakeUntil
    -> Disable MemberSelector(Selector=Item1)
    -> StringProperty(Value="GERION INSERTED FOR TESTING")
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=ProcessingTrialEnd)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow ProcessTrialEnd => #37
      Description: Settles the trial once it ends: reward, punishment or neither, then TrialOutcome at once and TrialEnded 2 s later. TrialOutcome is multicast before a Take(1), as TrialEnded is: a MulticastSubject passes on its source's completion, and this stream completes at the end of every trial, which would complete the shared TrialOutcome PublishSubject and stop the trial log after trial 1 (it did: test-1729, 9 Nov 2026). The Take(1) unsubscribes from upstream as the outcome passes, so the completion never reaches it. Keep any multicast to a shared PublishSubject from here before that Take(1). (BehaviorSubjects such as WasRewarded are not completed this way.)
      Workflow
        WorkflowInput Source1
        -> TakeLast(Count=1) => #1
        SubscribeSubject CurrFreqV => #2
        SubscribeSubject CurrFreq => #3
        #2, #3 -> CombineLatest => #4
        #1, #4 -> WithLatestFrom => #5
        -> MemberSelector(Selector=Item2.Item1)
        -> MulticastSubject TrialEndFreqV
        #5 -> MemberSelector(Selector=Item2.Item2)
        -> MulticastSubject TrialEndFreq => #9
        SubscribeSubject RewardFloorFreq => #10
        SubscribeSubject RewardCeilFreq => #11
        #10, #11 -> Zip => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
        -> BehaviorSubject WasOnTarget => #15
        -> Condition OnTarget => #16
            WorkflowInput Source1
            -> WorkflowOutput
        -> Condition NOTTimeoutOrTrackEnd
            SubscribeSubject HitEndOfTrack => #0
            SubscribeSubject WasTimeout => #1
            #0, #1 -> CombineLatest => #2
            WorkflowInput Source1 => #3
            #2, #3 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IfEitherTrue
              Expression: (it.Item1 || it.Item2)
            -> BitwiseNot
            -> WorkflowOutput
        -> SelectMany Reward => #18
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=ToneAmplitude) => #1
            -> PropertyMapping(Amplitude)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=480, Frequency=6000, Waveform=Sine, SampleRate=48000, Depth=F32, Amplitude=0.05, Offset=0, Phase=0) => #3
            #1 -> PropertyMapping(RangeMax) => #4
            #3, #4 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
            -> Take(Count=25) => #6
            #1 -> PropertyMapping(Amplitude)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=480, Frequency=9000, Waveform=Sine, SampleRate=48000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0) => #8
            #1 -> PropertyMapping(RangeMax) => #9
            #8, #9 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
            -> Take(Count=25) => #11
            #6, #11 -> Concat
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> MulticastSubject RewardBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput

            WorkflowInput Source1
            -> Condition IfReward
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #21
            SubscribeSubject StageRow
            -> MemberSelector(Selector=RewardSizeUl) => #24
            #21, #24 -> WithLatestFrom
            -> MulticastSubject DeliverRewardCommand
        #16 -> Condition WASTimeoutOrTrackEnd
            SubscribeSubject HitEndOfTrack => #0
            SubscribeSubject WasTimeout => #1
            #0, #1 -> CombineLatest => #2
            WorkflowInput Source1 => #3
            #2, #3 -> Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform IfEitherTrue
              Expression: (it.Item1 || it.Item2)
            -> WorkflowOutput
        -> SelectMany PunishmentToneAndTimeout => #20
            SubscribeSubject ErrorTone => #0
            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToneScale
              Expression: it.Punishment.Sound.Enabled ? it.Punishment.Sound.Gain / 32767.0 : 0.0
            -> PropertyMapping(Scale) => #3
            #0, #3 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> MulticastSubject ErrorBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1) => #9
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Punishment.TimeoutSeconds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S) => #14
            #9, #14 -> Zip
            -> BooleanProperty(Value=false)
            -> WorkflowOutput

            BooleanProperty(Value=true)
            -> MulticastSubject WasPunished
        #15 -> Condition OffTarget => #22
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #15 -> DoubleProperty(Value=0)
        -> MulticastSubject TrialActive
        SubscribeSubject StageRow => #21
        #21, #22 -> SubscribeWhen
        -> Take(Count=1) => #24
        -> Condition PunishWrongZone?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: it.PunishWrongZone
            -> WorkflowOutput
        -> SelectMany PunishmentToneAndTimeout => #26
            SubscribeSubject ErrorTone => #0
            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToneScale
              Expression: it.Punishment.Sound.Enabled ? it.Punishment.Sound.Gain / 32767.0 : 0.0
            -> PropertyMapping(Scale) => #3
            #0, #3 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
            -> Take(Count=1)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> MulticastSubject ErrorBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1) => #9
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Punishment.TimeoutSeconds)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S) => #14
            #9, #14 -> Zip
            -> BooleanProperty(Value=false)
            -> WorkflowOutput

            BooleanProperty(Value=true)
            -> MulticastSubject WasPunished
        #24 -> Condition NoPunishWrongZone?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNot4or5or6
              Expression: !it.PunishWrongZone
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #28
        #18, #20, #26, #28 -> Merge
        -> MulticastSubject WasRewarded
        -> BooleanProperty(Value=true)
        -> MulticastSubject TrialOutcome
        -> Take(Count=1)
        -> Delay(DueTime=PT2S)
        -> MulticastSubject TrialEnded
        -> Take(Count=1)
        -> WorkflowOutput
    #8, #40 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "cm to SpatFreq" => #42
      Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item2.Item1 <= 0 ? 0 : it.Item1 / it.Item2.Item1)))
    -> Condition DriftStage?
        SubscribeSubject StageRow
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: it.FrequencyDrift
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsFirstStage)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> GroupWorkflow AddFreqDriftV => #45
        WorkflowInput Source1 => #0
        SubscribeSubject StartFreqV => #1
        -> PropertyMapping(Value) => #2
        #0, #2 -> Subtract(Operand=DoubleProperty(Value=0.03))
        -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
          Expression: it
        SubscribeSubject BeepTimer => #5
        SubscribeSubject EndFreqV => #6
        SubscribeSubject DriftBeepsTillEnd => #7
        #1, #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
          Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
        #5, #9 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
          Expression: Math.Pow(it.Item2, it.Item1)
        SubscribeSubject StartFreqV => #12
        #11, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
          Expression: it.item2 * it.Item1
        -> PropertyMapping(Value) => #15
        #4, #15 -> Add(Operand=DoubleProperty(Value=0.0626788839256218))
        -> WorkflowOutput
    #42 -> Condition NoDriftStage?
        SubscribeSubject StageRow
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
          Expression: !it.FrequencyDrift
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow Monitor => #47
        ExternalizedMapping(Value)
        -> StringProperty(Value=IsNOTFirstStage)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    #45, #47 -> Merge
    -> MulticastSubject CurrFreqV => #49
    #3 -> MemberSelector(Selector=Item1) => #50
    -> GroupWorkflow OpacityOnOff => #51
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform "On Every Beep" => #1
          Expression: 1.0
        SubscribeSubject Opacity
        -> PropertyMapping(Value) => #3
        #1, #3 -> Multiply(Operand=DoubleProperty(Value=1)) => #4
        SubscribeSubject VisualStimActive
        -> PropertyMapping(Value) => #6
        #4, #6 -> Multiply(Operand=DoubleProperty(Value=0)) => #7
        SubscribeSubject TrialActive
        -> PropertyMapping(Value) => #9
        #7, #9 -> Multiply(Operand=DoubleProperty(Value=1))
        -> MulticastSubject CurrOpacity
        -> WorkflowOutput
    #50 -> GroupWorkflow RandomisePhase => #52
        WorkflowInput Source1
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it*2*Math.Pi)
        -> MulticastSubject CurrPhase
        -> WorkflowOutput
    #49, #51, #52 -> Zip => #53
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject GratingSpatialFrequency => #55
    #53 -> GroupWorkflow HideAfterTruncation => #56
      Description: Hides the grating past the truncation point on truncated trials (a stage's truncatedTrialFraction of its trials; row 5, Tom Childs' stage 6, in the task file)
      Workflow
        WorkflowInput Source1 => #0
        SubscribeSubject TruncationPoint => #1
        SubscribeSubject StartFreqV => #2
        SubscribeSubject EndFreqV => #3
        #1, #2, #3 -> CombineLatest => #4
        #0, #4 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Opacity
          Description="Grating's sweep fraction, rounded to 3 decimals like the tone's in SilenceAfterTruncation, so both are hidden from the same position."
          Expression: it.Item2.Item1 >= 1 || Math.Round(Math.Log(Convert.ToDouble(it.Item1.Item1) / Convert.ToDouble(it.Item2.Item2)) / Math.Log(Convert.ToDouble(it.Item2.Item3) / Convert.ToDouble(it.Item2.Item2)), 3) < it.Item2.Item1 ? it.Item1.Item2 : 0.0
        -> WorkflowOutput
    #56, #3, #53 -> GroupWorkflow LogStimulus
      Description: One BonsaiData_StimulusState row per beep while the trial is active (TrialActive = 1, so rows stop at the outcome): the beep count and position from Skip and the grating from the visual branch, zipped beep by beep, with the tone values that same beep set (CurrFreq, AudBin, StimulusActive are updated by the tone branch before the grating branch runs). Reads the tone only through those subjects, so the tone's chain is untouched. Also publishes StimulusOnsetTime, the Harp time of the trial's first row: its first tone pip and grating frame, since Skip has already dropped the beeps before it (StimulusStartBeep: beep 1, or laserToStimulusSeconds / 50 ms in an optogenetics experiment; beep 0 is the trial's start and its laser trigger). BonsaiData_Trial's stimulusOnsetTime. Sits in series between HideAfterTruncation and GratingOpacity and passes the opacity straight through: a branch that did not lead on to the Repeat would stop the trials restarting.
      Workflow
        WorkflowInput Source2 => #0
        WorkflowInput Source3 => #1
        WorkflowInput Source1 => #2
        #0, #1, #2 -> Zip => #3
        SubscribeSubject CurrFreq => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject AudBin => #6
        #5, #6 -> WithLatestFrom => #7
        SubscribeSubject StimulusActive => #8
        #7, #8 -> WithLatestFrom => #9
        SubscribeSubject TrialActive => #10
        #9, #10 -> WithLatestFrom
        -> Condition IsTrialActive
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 == 1.0
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #13
        SubscribeSubject HarpTime => #14
        #13, #14 -> WithLatestFrom => #15
        SubscribeSubject TrialNumber => #16
        #15, #16 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform StimulusRow
          Expression: new(new(it.Item2 as trialNumber, it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as positionCm, it.Item1.Item1.Item1.Item1.Item2 as toneFrequencyHz, Convert.ToInt32(it.Item1.Item1.Item2) as stimulusActive, it.Item1.Item1.Item1.Item1.Item1.Item2.Item1 as visualSpatialFrequencyCpd) as Row, it.Item1.Item2 as Seconds)
        -> BehaviorSubject StimulusLogRow
        #15 -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject StimulusOnsetTime
        #2 -> WorkflowOutput
    -> MulticastSubject GratingOpacity => #58
    #55, #58 -> CombineLatest => #59
    #37, #59 -> CombineLatest
    -> Take(Count=1)
    -> GroupWorkflow Monitor
        ExternalizedMapping(Value)
        -> StringProperty(Value=ProcessedTrialEnd)
        -> Take(Count=1) => #2
        WorkflowInput Source1
        -> Materialize => #4
        #2, #4 -> CombineLatest
        -> Bonsai.IO.WriteLine
        -> MemberSelector(Selector=Item2)
        -> Dematerialize
        -> WorkflowOutput
    -> Repeat
    -> WorkflowOutput

    GroupWorkflow StimulusLogger
      Description: Writes BonsaiData\BonsaiData_StimulusState_<time>.csv (OpenRigs.Logging LogData): one row per beep while the trial is active, stamped with the Harp time of the beep, built by LogStimulus. Here rather than in Logging because StimulusLogRow is declared inside this group, as in Tom Childs' workflow (a logger in Logging cannot subscribe to a subject declared in TaskLogic: Bonsai reports a circular definition). Not part of the repeating trial chain, so it writes one file per experiment, created with its first row. AutoFlush writes each row to disk as it comes (about 20 a second, which LogData's AutoFlush is for): without it the file reached disk in 4 KB blocks, so the manifest's end-of-run write, which comes before this writer closes, recorded a size that stopped at the last full block (test-1802 and test-1813, 9 Nov 2026), and a Bonsai ended by force would lose up to 4 KB of beeps.
      Workflow
        SubscribeSubject StimulusLogRow => #0
        -> MemberSelector(Selector=Row) => #1
        #0 -> MemberSelector(Selector=Seconds) => #2
        #1, #2 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=BonsaiData_StimulusState, Selector="", AutoFlush=true, Extension=csv)
-> GroupWorkflow StartTrials
  Description: Subscribes TaskLogic, the trial loop, once the experiment folder exists (PathPrefix, about 1 s after Go) and the tones are loaded (WaveformDict, from the task read at Go), 0.5 s later so the experiment's logs are open before trial 1. Tom Childs' workflow started on the GUI's Start Session.
  Workflow
    WorkflowInput Source1 => #0
    SubscribeSubject PathPrefix => #1
    SubscribeSubject WaveformDict => #2
    #1, #2 -> Zip
    -> Delay(DueTime=PT0.5S) => #4
    #0, #4 -> SubscribeWhen
    -> WorkflowOutput

GroupWorkflow VirtualPosition
  Description: The mouse's position along this trial's track (MouseVirtualPosition, cm), from the wheel distance since the trial started; TrialDistFloor keeps the position from going back past a reached point. Tom Childs' top-level nodes.
  Workflow
    SubscribeSubject WheelDistanceCm => #0
    SubscribeSubject TrialStartWheelDistance => #1
    #0, #1 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform TrialDistance
      Expression: it.Item1 - it.Item2
    -> PublishSubject TrialDistance

    SubscribeSubject TrialDistance => #5
    SubscribeSubject TrialDistFloor
    -> ObserveOn(Scheduler=NewThreadScheduler) => #17
    #5, #17 -> WithLatestFrom => #7
    SubscribeSubject TrackLength => #8
    #7, #8 -> WithLatestFrom => #9
    SubscribeSubject TrialEnded => #10
    #9, #10 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform CalcVirtualPos => #12
      Description="Prevent pos < 0cm or >TrackLengthcm. Gate on TrialEnded to prevent stale feedback."
      Expression:
        new (
                    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1) as Floor,
                    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min((it.Item1.Item1.Item1 - Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1)), it.Item1.Item2) as VirtualPos
                    )
    -> MemberSelector(Selector=Floor)
    -> MulticastSubject TrialDistFloor
    #12 -> MemberSelector(Selector=VirtualPos)
    -> PublishSubject MouseVirtualPosition

GroupWorkflow Grating(Description="The drifting grating (BonVision DrawGratings) on the dome, its spatial frequency and opacity set by TaskLogic.")
    SubscribeSubject DrawStimuli => #0
    BehaviorSubject<System.Double> GratingSpatialFrequency
    -> PropertyMapping(SpatialFrequency(Selector=it)) => #2
    BehaviorSubject<System.Double> GratingOpacity
    -> PropertyMapping(Opacity) => #4
    #0, #2, #4 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=30
      Layer=1
      ExtentX=270
      ExtentY=105
      SpatialFrequency=0.3
      TemporalFrequency=0
      Phase=16.8036766
      Angle=90
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1000
      Aperture=0
      Opacity=0

GroupWorkflow TrialRow
  Description: Each trial's BonsaiData_Trial row (TrialRow), built when the trial's outcome is known (TrialOutcome: after the reward tone on a reward, after the error tone and timeout on a punishment, at once otherwise) from the latest value of each subject, and stamped with the Harp time then (Seconds). Tom Childs' TrialLog was built 2 s later, at TrialEnded, so a Stop in between lost the trial (audit, 9 Nov 2026). Columns are named and typed as the lab's list allows (K:\config\data-dictionary.json) and described in schemas\trial-columns.yml. outcome is av-dome's Correct, Incorrect or NoResponse (Pip, 9 Nov 2026), so rig-control's performance is Tom's success rate.
  Workflow
    SubscribeSubject TrialOutcome
    -> Condition Outcome? => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject Modality => #2
    #1, #2 -> WithLatestFrom => #3
    SubscribeSubject TrialNumber => #4
    #3, #4 -> WithLatestFrom => #5
    SubscribeSubject StageRow => #6
    #5, #6 -> WithLatestFrom => #7
    SubscribeSubject TrialEndFreq => #8
    #7, #8 -> WithLatestFrom => #9
    SubscribeSubject TrialEndFreqV => #10
    #9, #10 -> WithLatestFrom => #11
    SubscribeSubject TrackLength => #12
    #11, #12 -> WithLatestFrom => #13
    SubscribeSubject TrialDistance => #14
    #13, #14 -> WithLatestFrom => #15
    SubscribeSubject WasRewarded => #16
    #15, #16 -> WithLatestFrom => #17
    SubscribeSubject WasTimeout => #18
    #17, #18 -> WithLatestFrom => #19
    SubscribeSubject HitEndOfTrack => #20
    #19, #20 -> WithLatestFrom => #21
    SubscribeSubject TruncationPoint => #22
    #21, #22 -> WithLatestFrom => #23
    SubscribeSubject ITIStartHarp => #24
    #23, #24 -> WithLatestFrom => #25
    SubscribeSubject InterTrialInterval => #26
    #25, #26 -> WithLatestFrom => #27
    SubscribeSubject TrialStartHarp => #28
    #27, #28 -> WithLatestFrom => #29
    SubscribeSubject StimulusOnsetTime => #30
    #29, #30 -> WithLatestFrom => #31
    SubscribeSubject OutcomeHarp => #32
    #31, #32 -> WithLatestFrom => #33
    SubscribeSubject WasPunished => #34
    #33, #34 -> WithLatestFrom => #35
    SubscribeSubject TaskParams => #36
    #35, #36 -> WithLatestFrom => #37
    SubscribeSubject OptoTrial => #38
    #37, #38 -> WithLatestFrom => #39
    SubscribeSubject HarpTime => #40
    #39, #40 -> WithLatestFrom => #41
    -> Bonsai.Scripting.Expressions.ExpressionTransform BuildTrialRow => #42
      Expression: new(Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as trialNumber, it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString().ToLower() as trialType, (it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "Correct" : it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 || it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 || !it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.LickToReward ? "NoResponse" : "Incorrect") as outcome, (it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "EndOfTrack" : it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "Timeout" : !it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.LickToReward ? "FreqReached" : it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 ? "CorrectLick" : "WrongLickLimit") as endReason, it.Item1.Item1.Item1.Item2 && it.Item1.Item1.Item2.Punishment.Sound.Enabled as punishSound, (it.Item1.Item1.Item1.Item2 ? it.Item1.Item1.Item2.Punishment.TimeoutSeconds : 0.0) as punishTimeoutSeconds, Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as trackLengthCm, Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as endPositionCm, Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as toneEndFrequencyHz, Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as visualEndSpatialFrequencyCpd, Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2) as truncationFraction, it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as itiStartTime, it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds as itiSeconds, it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as trialStartTime, it.Item1.Item1.Item1.Item1.Item1.Item2 as stimulusOnsetTime, it.Item1.Item1.Item1.Item1.Item2 as outcomeTime, it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.RewardSizeUl as rewardSizeUl, it.Item1.Item2.OptogeneticLaserPowerMw as laserPowerMw, it.Item1.Item2.OptogeneticCondition as laserCondition)
    #41 -> MemberSelector(Selector=Item2) => #43
    #42, #43 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> PublishSubject TrialRow

GroupWorkflow Logging
  Description: Everything written to the experiment folder: LogControllerLogic makes the folder at Go and publishes PathPrefix; ExperimentLogs holds every log that waits for it; BonsaiData_Async takes the controller's events and each reward from Start; RecordHarpDevices, ExperimentManifest and the Recording phase follow PathPrefix.
  Workflow
    GroupWorkflow LogControllerLogic
      Description: Waits for Go (RunSettings: the controller's SubjectId and SessionId), then LogController creates the experiment folder RootPath\sub-<SubjectId>\ses-<SessionId>_<DateTime> and publishes it as PathPrefix, which every log waits for. RootPath is rig.yml's, the rig's acquisition folder itself (C:\Coen-Lab-Local\Acquired-Data): experiments have no project folder.
      Workflow
        SubscribeSubject RunSettings
        -> PropertyMapping(SubjectId(Selector=Item1), SessionId(Selector=Item2)) => #1
        SubscribeSubject RigConfigs
        -> MemberSelector(Selector=RootPath)
        -> PropertyMapping(Path) => #4
        #1, #4 -> IncludeWorkflow(Path=OpenRigs.Logging:LogController.bonsai, SubjectId=UNMAPPED, SessionId=UNMAPPED, Path=C:\Coen-Lab-Local\Acquired-Data)
        -> DelaySubscription(DueTime=PT1S) => #6
        SubscribeSubject RunSettings => #7
        #6, #7 -> SubscribeWhen
        -> WorkflowOutput

    IncludeWorkflow(Path=OpenRigs.Logging:LogAsync.bonsai)

    SubscribeSubject PathPrefix
    -> SelectMany ExperimentLogs
      Description: Starts every experiment log once LogControllerLogic publishes PathPrefix. TrialParameters writes BonsaiData_Trial (LogTrial): one row per trial, built by the TrialRow group when the outcome is known (TrialRow, a PublishSubject: trials start only after PathPrefix, so no row comes before the folder): the trial's draws, stage, outcome and why it ended, positions and frequencies, and its Harp times (itiStartTime, trialStartTime, stimulusOnsetTime, outcomeTime), with Seconds the time the row was built. Its columns are named and typed as the lab's list allows (K:\config\data-dictionary.json; rig-control checks before launch), and what each means (codes, units, former names) is schemas\trial-columns.yml, which ExperimentManifest copies into each experiment's manifest; settings that are the same throughout the experiment are not columns, being in the experiment's settings files (Settings\Settings_Rig_, Settings_Task_ and Settings_Experiment_<DateTime>.json: rig.yml as read, the task as read at Go, and from ExperimentSettings the subject, session, workflow, commit, who launched and sent Go and every ExperimentControl parameter at Go), and each trial's optogenetic draw is in its laserPowerMw and laserCondition columns. Subjects that already hold a value (BehaviorSubject, AsyncSubject) hand it to the late subscriber. Values set at startup, such as the Zapit startup replies and the first trial draw, are therefore logged when the experiment logs start, about a second after Go, with that time. Add new loggers inside this group.
      Workflow
        GroupWorkflow TrialParameters(Description="Writes each trial's row (TrialRow, built by the TrialRow group when the outcome is known, stamped then) into BonsaiData_Trial.")
            SubscribeSubject TrialRow
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogTrial.bonsai)
            -> WorkflowOutput

        GroupWorkflow BehaviorBoard
            SubscribeSubject BehaviorBoard-Main.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> GroupWorkflow ExcludeAnalogDataMaybe
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=ExcludeAnalogData?))
                -> BooleanProperty(Value=false) => #2
                #0, #2 -> WithLatestFrom => #3
                -> Condition Flagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1)
                -> Harp.Behavior.FilterRegister(FilterType=Exclude, Register=Harp.Behavior.AnalogData) => #6
                #3 -> Condition NotFlagged
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item1) => #8
                #6, #8 -> Merge
                -> WorkflowOutput
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=BehaviorBoard-Main)

        GroupWorkflow Cameras
            SubscribeSubject PathPrefix
            -> SelectMany
                SubscribeSubject Camera-Face.Data
                -> Skip(Count=1) => #1
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #10
                #1, #10 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Face, FrameRate=50)

                SubscribeSubject Camera-Pupil.Data
                -> Skip(Count=1) => #4
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #12
                #4, #12 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Pupil, FrameRate=50)

                SubscribeSubject Camera-Body.Data
                -> Skip(Count=1) => #7
                SubscribeSubject BehaviorBoard-Main
                -> PropertyMapping(FrameRate(Selector=Settings.CameraTriggerController.Trigger0Frequency)) => #14
                #7, #14 -> IncludeWorkflow(Path=OpenRigs.Logging:LogVideo.bonsai, LogName=Camera-Body, FrameRate=50)

        GroupWorkflow LicketySplit
            SubscribeSubject LicketySplit-Left.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplit-Left)

            SubscribeSubject LicketySplit-Right.Data
            -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=LicketySplit-Right)

        SubscribeSubject TimestampGeneratorGen3-Main.Data
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=TimestampGeneratorGen3-Main)

        SubscribeSubject RigConfigs
        -> UclOpenCoenDomeNavigation.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow Settings_Rig(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TaskConfig
        -> UclOpenCoenDomeNavigationTask.SerializeToJson(Formatting=Indented)
        -> IncludeWorkflow Settings_Task(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        GroupWorkflow ZapitReplies
          Description: Harp-timestamped log of every Zapit reply: the presented condition and laser state per StartStimulus, plus the last startup query reply (GetNumConditions), handed over by the ZapitReplies BehaviorSubject when ExperimentLogs starts.
          Workflow
            SubscribeSubject ZapitReplies
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                                  CommandCode as command,
                                  Value as value,
                                  LaserOn as laserOn,
                                  IsError as isError,
                                  ServerDatenum as serverDatenum)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> IncludeWorkflow(Path=OpenRigs.Logging:LogData.bonsai, LogName=BonsaiData_ZapitReplies, Selector="", Extension=csv)
            -> WorkflowOutput

        SubscribeSubject StepperDriver1Events
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=StepperDriver-A)

        SubscribeSubject StepperDriver2Events
        -> IncludeWorkflow(Path=Extensions\LoggingPrefixCondition.bonsai)
        -> IncludeWorkflow(Path=OpenRigs.Logging:LogHarpDevice.bonsai, LogName=StepperDriver-B)

        SubscribeSubject ExperimentGo
        -> OpenRigs.Control.ExperimentSettings
        -> IncludeWorkflow Settings_Experiment(Path=OpenRigs.Logging:LogDataSchema.bonsai, Extension=json)

        SubscribeSubject TaskRandom
        -> MemberSelector RngSeed
          Description: The seed every draw of the experiment follows from (the task file's rngSeed, or one drawn at Go when it is null), logged once: the Take(1) is after the multicast, not before it. A MulticastSubject passes on its source's completion, and a Take(1) ahead of it completed the shared AsyncEvents subject a second after Go, so no reward, Stop or other Async event was logged after RngSeed and rig-control counted no water (test-1802, 9 Nov 2026). After the multicast, the Take(1) unsubscribes as the seed passes, and TaskRandom (a BehaviorSubject) never completes.
          Selector=Seed
        -> OpenRigs.Logging.CreateAsyncEvent(Event=RngSeed)
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> MulticastSubject AsyncEvents
        -> Take(Count=1)

        SubscribeSubject TaskConfig
        -> Condition OptogeneticsExperiment?
            WorkflowInput Source1
            -> MemberSelector(Selector=TaskParameters.Optogenetics.UseZapit)
            -> WorkflowOutput
        -> MemberSelector(Selector=TaskParameters.Optogenetics.ZapitConfigPath)
        -> ZapitConditionsSnapshot
        -> IncludeWorkflow Settings_ZapitConditions(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardLineLeft => #4
    SubscribeSubject RewardLineRight => #5
    #4, #5 -> Merge => #6
    -> Condition DO1?(Description="Passes the reward line on DO1 when it is calibrated, whichever side rewardValves gives it.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Calibrated && Line == 1
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO1(Path=OpenRigs.Logging:LogDataSchema.bonsai)
    #6 -> Condition DO2?(Description="Passes the reward line on DO2 when it is calibrated, whichever side rewardValves gives it.")
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Calibrated && Line == 2
        -> WorkflowOutput
    -> MemberSelector(Selector=ArtefactJson)
    -> IncludeWorkflow ValveCalibrationDO2(Path=OpenRigs.Logging:LogDataSchema.bonsai)

    SubscribeSubject RewardDelivered
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new("RewardDelivered" as Event, it.Side.ToString() + " DO" + it.Line.ToString() + " requested=" + it.RequestedUl.ToString() + " pulses=" + it.Count.ToString() + " calibrated=" + it.Calibrated.ToString() + " clamped=" + it.Clamped.ToString() as Detail, it.DeliveredUl as Value)
    -> OpenRigs.Logging.CreateAsyncEvent(Event=RewardDelivered)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MulticastSubject AsyncEvents

    SubscribeSubject PathPrefix
    -> OpenRigs.Control.ReportMetric(Name=path)
    -> OpenRigs.Control.ReportPhase(Phase=Recording)

    OpenRigs.HarpDevices.RecordHarpDevices RecordHarpDevices
      Description: Checks every Harp device in rig.yml at Start and records it into each experiment (OpenRigs.HarpDevices): the Behavior board, the timestamp generator, both stepper drivers and both Lickety Splits (each a rig.yml entry with a portName whose data the workflow publishes as <Name>.Data) must be on their portName with their usbSerial, or the workflow stops saying which board is where; 0.5 s after the experiment folder appears it asks each for a register dump on <Name>.Commands, which its log records; and it writes <Name>\<Name>_device.json and the register map <Name>\<Name>.yml, which ExperimentManifest expects (harp).
      ConfigRoot=C:\Coen-Lab-Local\RigConfigs

    OpenRigs.Manifest.ExperimentManifest ExperimentManifest
      Description: Writes manifest.json into the experiment folder (OpenRigs.Manifest), as av-dome's: the machine, this repo's commit, who launched it and sent Go, rig.yml and the calibration files the workflow reads (MeshMap.csv, gammalut.bmp, this mouse's spout positions) by hash, what each BonsaiData_Trial column means (schemas\trial-columns.yml), and what the experiment must leave: a folder for each device in rig.yml, the Harp device records, the three settings files and BonsaiData (Trial, Async and StimulusState).
      IngestScript=coen-dome-navigation
      ConfigFiles: C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\rig.yml;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\MeshMap.csv;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\gammalut.bmp;C:\Coen-Lab-Local\RigConfigs\%COMPUTERNAME%\calibration\LickSpoutPositions\{SubjectId}.csv
      ExpectedFiles=auto;harp;Settings/Settings_Rig_;Settings/Settings_Task_;Settings/Settings_Experiment_;BonsaiData/
      TrialColumns=schemas\trial-columns.yml

    SubscribeSubject ControlEvents
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new((it.Kind.ToString() == "Command" ? it.Name : it.Kind.ToString()) as Event, it.ToString() as Detail)
    -> OpenRigs.Logging.CreateAsyncEvent(Event=Control)
    -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> MulticastSubject AsyncEvents

OpenRigs.LiveView.StreamDevices LiveView
  Description: Streams every device in this machine's rig.yml that the workflow publishes, over ZeroMQ, for the live view (OpenRigs.LiveView): data on TCP 5556, video on 5558, from Start, in ready mode too. The three cameras as Camera-Face/Pupil/Body.video, 5 JPEG frames a second at 320 x 240, and the Behavior board's encoder from BehaviorBoard-Main.Data, 10 a second; each rate and size can be changed in rig.yml under the device's liveView:. Also elapsed, seconds since the experiment folder appeared, and liveview, this workflow and its commit. Every message carries the rig and the session key, ready until the experiment folder exists. Last in the workflow, because it streams only subjects built before it. A port already in use stops the workflow at Start.
  ConfigRoot=C:\Coen-Lab-Local\RigConfigs
  DataPort=5556
  VideoPort=5558
